def model my_model as
  // Oxygen transport model: alveoli to RBC including oxyhaemoglobin model. This version is driven by a prescribed sinusiodal airflow.
  def unit dim as
    unit dimensionless;
  enddef;
  def unit per_s as
    unit second {expo: -1};
  enddef;
  def unit L_per_s as
    unit litre;
    unit second {expo: -1};
  enddef;
  def unit mol_per_s as
    unit mole;
    unit second {expo: -1};
  enddef;
  def unit mol_per_L as
    unit mole;
    unit litre {expo: -1};
  enddef;
  def unit per_mol as
    unit mole {expo: -1};
  enddef;
  def unit millimol_per_mol as
    unit mole {pref: milli};
    unit mole {expo: -1};
  enddef;
  def unit L_per_mol as
    unit litre;
    unit mole {expo: -1};
  enddef;
  def unit mM as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit mM2 as
    unit mM {expo: 2};
  enddef;
  def unit J_per_mol as
    unit joule;
    unit mole {expo: -1};
  enddef;
  def unit J_per_L as
    unit joule;
    unit litre {expo: -1};
  enddef;
  def unit kPa as
    unit joule;
    unit litre {expo: -1};
  enddef;
  def unit J_per_L2 as
    unit joule;
    unit litre {expo: -2};
  enddef;
  def unit mol_per_s_per_mM as
    unit mole;
    unit second {expo: -1};
    unit mM {expo: -1};
  enddef;
  def unit L_per_s_per_kPa as
    unit litre;
    unit second {expo: -1};
    unit kPa {expo: -1};
  enddef;
  def unit mol_per_s_per_kPa as
    unit mole;
    unit second {expo: -1};
    unit kPa {expo: -1};
  enddef;
  def unit mol_per_L_per_kPa as
    unit mole;
    unit litre {expo: -1};
    unit kPa {expo: -1};
  enddef;
  def unit J_per_mol_per_K as
    unit joule;
    unit mole {expo: -1};
    unit kelvin {expo: -1};
  enddef;
  def unit mM_per_kPa as
    unit mM;
    unit kPa {expo: -1};
  enddef;

  def comp main as
    var t: second;
    var R: J_per_mol_per_K {init: 8.314};
    var T: kelvin {init: 308};
    var RT: J_per_mol;
    RT = R*T;
    var Vol: litre {init: 1};
    var k_alv_m: L_per_mol {init: 25};
    // INSPIRED AIR
    var t_respire: second;
    var T_respire: second;
    var T_inspire: second {init: 2};
    var T_expire: second {init: 3};
    t_respire = t-T_respire*floor(t/T_respire);
    T_respire = T_inspire+T_expire;
    var tidal_vol: litre {init: 0.5};
    var tau_expire: second {init: 1};
    var A_ins: L_per_s;
    var B_ins: L_per_s;
    A_ins = 0.5{dim}*tidal_vol/T_inspire;
    B_ins = -2{dim}*T_inspire*A_ins/(tau_expire*(exp(-T_expire/tau_expire)-1{dim}));
    var v_ins_air: L_per_s;
    v_ins_air = sel
      case t_respire < T_inspire:
        A_ins*pi*sin(pi*t_respire/T_inspire);
      otherwise:
        -B_ins*exp(-(t_respire-T_inspire)/tau_expire);
    endsel;
    var q_ins_air: litre {init: 1.5};
    ode(q_ins_air, t) = v_ins_air;
    // var q_seg_air: litre {init: 0.2};
    var q_seg_air: litre {init: 0.1};
    // var q_adv_air: litre {init: 0.8};
    var q_adv_air: litre {init: 0.2};
    var q_alv_air: litre;
    q_alv_air = q_ins_air-q_seg_air-q_adv_air;
    var p_ins_air: kPa {init: 92};
    // 100 kPa minus 8 kPa water vapour
    var alpha_ins_o2: dim {init: 0.21};
    var alpha_ins_co2: dim {init: 0.00042};
    // SEGMENT AIRWAYS
    var q_seg_o2: litre {init: 0};
    var q_seg_co2: litre {init: 0.2};
    ode(q_seg_o2, t) = v_seg_o2-v_adv_o2;
    ode(q_seg_co2, t) = v_seg_co2-v_adv_co2;
    var alpha_seg_o2: dim;
    var alpha_seg_co2: dim;
    alpha_seg_o2 = q_seg_o2/q_seg_air;
    alpha_seg_co2 = q_seg_co2/q_seg_air;
    var p_seg_o2: kPa;
    var p_seg_co2: kPa;
    p_seg_o2 = alpha_seg_o2*p_ins_air;
    p_seg_co2 = alpha_seg_co2*p_ins_air;
    var v_seg_o2: L_per_s;
    v_seg_o2 = sel
      case v_ins_air > 0{L_per_s}:
        alpha_ins_o2*v_ins_air;
      otherwise:
        alpha_seg_o2*v_ins_air;
    endsel;
    var v_seg_co2: L_per_s;
    v_seg_co2 = sel
      case v_ins_air > 0{L_per_s}:
        alpha_ins_co2*v_ins_air;
      otherwise:
        alpha_seg_co2*v_ins_air;
    endsel;
    // ADVECTIVE COMPARTMENT
    var q_adv_o2: litre {init: 0};
    var q_adv_co2: litre {init: 0.2};
    ode(q_adv_o2, t) = v_adv_o2-v_diff_o2;
    ode(q_adv_co2, t) = v_adv_co2-v_diff_co2;
    var alpha_adv_o2: dim;
    var alpha_adv_co2: dim;
    alpha_adv_o2 = q_adv_o2/q_adv_air;
    alpha_adv_co2 = q_adv_co2/q_adv_air;
    var p_adv_o2: kPa;
    var p_adv_co2: kPa;
    p_adv_o2 = alpha_adv_o2*p_ins_air;
    p_adv_co2 = alpha_adv_co2*p_ins_air;
    var v_adv_o2: L_per_s;
    v_adv_o2 = sel
      case v_ins_air > 0{L_per_s}:
        alpha_seg_o2*v_ins_air;
      otherwise:
        alpha_adv_o2*v_ins_air;
    endsel;
    var v_adv_co2: L_per_s;
    v_adv_co2 = sel
      case v_ins_air > 0{L_per_s}:
        alpha_seg_co2*v_ins_air;
      otherwise:
        alpha_adv_co2*v_ins_air;
    endsel;
    // ALVEOLAR COMPARTMENT
    var q_alv_o2: litre {init: 0};
    var q_alv_co2: litre {init: 0.2};
    ode(q_alv_o2, t) = v_diff_o2-v_alv_o2;
    ode(q_alv_co2, t) = v_diff_co2-v_alv_co2;
    var alpha_alv_o2: dim;
    var alpha_alv_co2: dim;
    alpha_alv_o2 = q_alv_o2/q_alv_air;
    alpha_alv_co2 = q_alv_co2/q_alv_air;
    var p_alv_o2: kPa;
    var p_alv_co2: kPa;
    p_alv_o2 = alpha_alv_o2*p_ins_air;
    p_alv_co2 = alpha_alv_co2*p_ins_air;
    var v_diff_o2: L_per_s;
    var v_diff_co2: L_per_s;
    var kappa_alv_diff: L_per_s_per_kPa {init: 1e3};
    v_diff_o2 = kappa_alv_diff*(p_adv_o2-p_alv_o2);
    v_diff_co2 = kappa_alv_diff*(p_adv_co2-p_alv_co2);
    // CONVERSION OF UNITS FROM J/L (kPa) x L/s to J/mol x mol/s
    var u_alv_o2: J_per_mol;
    var u_alv_co2: J_per_mol;
    var v_alv_o2: L_per_s;
    var v_alv_co2: L_per_s;
    var v_cap_o2: mol_per_s;
    var v_cap_co2: mol_per_s;
    u_alv_o2 = p_alv_o2*k_alv_m;
    u_alv_co2 = p_alv_co2*k_alv_m;
    v_cap_o2 = v_alv_o2/k_alv_m;
    v_cap_co2 = v_alv_co2/k_alv_m;
    // GAS EXCHANGE
    // Solubility of o2 in water
    var alpha_cap_o2: mM_per_kPa {init: 0.011};
    // Solubility of co2 in water
    // var alpha_cap_co2: mM_per_kPa {init: 0.05};  //Solubility of co2 in water
    var alpha_cap_co2: mM_per_kPa {init: 0.22};
    var c_epi_o2: mM;
    var c_epi_co2: mM;
    c_epi_o2 = alpha_cap_o2*p_alv_o2;
    c_epi_co2 = alpha_cap_co2*p_alv_co2;
    var c_cap_o2: mM;
    var c_RBC_o2: mM;
    var c_cap_co2: mM;
    var c_RBC_co2: mM;
    c_cap_o2 = q_cap_o2*1e3{millimol_per_mol}/Vol;
    c_RBC_o2 = q_RBC_o2*1e3{millimol_per_mol}/Vol;
    c_cap_co2 = q_cap_co2*1e3{millimol_per_mol}/Vol;
    c_RBC_co2 = q_RBC_co2*1e3{millimol_per_mol}/Vol;
    var v_RBCm_o2: mol_per_s;
    var v_RBCm_co2: mol_per_s;
    var kappa_m_Rx: mol_per_s_per_mM {init: 1e-1};
    v_cap_o2 = kappa_m_Rx*(c_epi_o2-c_cap_o2);
    v_cap_co2 = kappa_m_Rx*(c_epi_co2-c_cap_co2);
    v_RBCm_o2 = kappa_m_Rx*(c_cap_o2-c_RBC_o2);
    v_RBCm_co2 = kappa_m_Rx*(c_cap_co2-c_RBC_co2);
    var q_cap_o2: mole {init: 0.001};
    var q_cap_co2: mole {init: 0.001};
    ode(q_cap_o2, t) = v_cap_o2-v_RBCm_o2;
    ode(q_cap_co2, t) = v_cap_co2-v_RBCm_co2+v_cap_CA_Rx;
    var q_RBC_o2: mole {init: 0.00015};
    // Dissolved o2  is 0.15 mM
    var q_RBC_co2: mole {init: 0.001};
    // Dissolved co2 is 1 mM
    ode(q_RBC_o2, t) = v_RBCm_o2-v_oxyHb_Rx;
    ode(q_RBC_co2, t) = v_RBCm_co2+v_RBC_CA_Rx;
    // BICARBONATE & H+ in RBC
    var v_blood: L_per_s {init: 0.0};
    // Volumetric cardiac output (0.1 L/s).
    var v_cap_netinflux_bicarb: mol_per_s;
    var v_RBC_netinflux_bicarb: mol_per_s;
    v_cap_netinflux_bicarb = v_blood*0.001{mol_per_L};
    v_RBC_netinflux_bicarb = v_blood*0.001{mol_per_L};
    var q_cap_bicarb: mole {init: 0.024};
    // Bicarbonate sb 0.024 (24 mM) in blood
    var q_RBC_bicarb: mole {init: 0.024};
    // Bicarbonate sb 0.024 (24 mM) in blood
    ode(q_cap_bicarb, t) = v_cap_netinflux_bicarb-v_cap_CA_Rx;
    ode(q_RBC_bicarb, t) = v_RBC_netinflux_bicarb-v_RBC_CA_Rx;
    var c_cap_bicarb: mM;
    var c_RBC_bicarb: mM;
    c_cap_bicarb = q_RBC_bicarb*1e3{millimol_per_mol}/Vol;
    c_RBC_bicarb = q_RBC_bicarb*1e3{millimol_per_mol}/Vol;
    var c_RBC_H: mM {init: 1e-4};
    var c_cap_H: mM {init: 1e-4};
    // CARBONIC ANHYDRASE (CA) reactions for RBC and capillary serum
    var v_CA_mx: mol_per_s {init: 1e4};
    var k_CA_1: mM2 {init: 0.1};
    var k_CA_2: mM {init: 0.1};
    var v_cap_CA_Rx: mol_per_s;
    var PHI_cap: mM2;
    var Q_cap_CA: mM {init: 2e-3};
    // Q = 24mM x 1e-4mM / 1.2mM = 2e-3 mM
    var Q_cap_CAA: mM;
    Q_cap_CAA = c_cap_bicarb*c_cap_H/c_cap_co2;
    PHI_cap = 1{mM2}*(1{dim}+c_cap_bicarb*c_cap_H/k_CA_1+c_cap_co2/k_CA_2);
    v_cap_CA_Rx = v_CA_mx/PHI_cap*(c_cap_bicarb*c_cap_H-Q_cap_CA*c_cap_co2);
    var v_RBC_CA_Rx: mol_per_s;
    var PHI_RBC: mM2;
    var Q_RBC_CA: mM {init: 2e-3};
    // Q = 24mM x 1e-4mM / 1.2mM = 2e-3 mM
    var Q_RBC_CAA: mM;
    Q_RBC_CAA = c_RBC_bicarb*c_RBC_H/c_RBC_co2;
    PHI_RBC = 1{mM2}*(1{dim}+c_RBC_bicarb*c_RBC_H/k_CA_1+c_RBC_co2/k_CA_2);
    v_RBC_CA_Rx = v_CA_mx/PHI_RBC*(c_RBC_bicarb*c_RBC_H-Q_RBC_CA*c_RBC_co2);
    // OXYGEN BINDING to haemoglobin
    var v_Hbinflux: mol_per_s;
    v_Hbinflux = v_blood*0.024{mol_per_L};
    // Hb in blood is 2.4mM or 0.0024 moles/L
    var v_oxyHb_Rx: mol_per_s;
    v_oxyHb_Rx = v_R1+v_R2+v_R3+v_R4+v_T1+v_T2+v_T3+v_T4;
    // Flux balance equations
    var q_R0: mole {init: 0.004};
    var q_R1: mole {init: 0};
    var q_R2: mole {init: 0};
    var q_R3: mole {init: 0};
    var q_R4: mole {init: 0};
    ode(q_R0, t) = -v_RT0-v_R1+v_Hbinflux-v_Hbinflux/10{dim};
    ode(q_R1, t) = -v_RT1+v_R1-v_R2-v_Hbinflux/10{dim};
    ode(q_R2, t) = -v_RT2+v_R2-v_R3-v_Hbinflux/10{dim};
    ode(q_R3, t) = -v_RT3+v_R3-v_R4-v_Hbinflux/10{dim};
    ode(q_R4, t) = -v_RT4+v_R4-v_Hbinflux/10{dim};
    var q_T0: mole {init: 0};
    var q_T1: mole {init: 0};
    var q_T2: mole {init: 0};
    var q_T3: mole {init: 0};
    var q_T4: mole {init: 0};
    ode(q_T0, t) = v_RT0-v_T1-v_Hbinflux/10{dim};
    ode(q_T1, t) = v_RT1+v_T1-v_T2-v_Hbinflux/10{dim};
    ode(q_T2, t) = v_RT2+v_T2-v_T3-v_Hbinflux/10{dim};
    ode(q_T3, t) = v_RT3+v_T3-v_T4-v_Hbinflux/10{dim};
    ode(q_T4, t) = v_RT4+v_T4-v_Hbinflux/10{dim};
    // Concentrations
    var c_R0: mM;
    var c_R1: mM;
    var c_R2: mM;
    var c_R3: mM;
    var c_R4: mM;
    c_R0 = q_R0*1e3{millimol_per_mol}/Vol;
    c_R1 = q_R1*1e3{millimol_per_mol}/Vol;
    c_R2 = q_R2*1e3{millimol_per_mol}/Vol;
    c_R3 = q_R3*1e3{millimol_per_mol}/Vol;
    c_R4 = q_R4*1e3{millimol_per_mol}/Vol;
    var c_T0: mM;
    var c_T1: mM;
    var c_T2: mM;
    var c_T3: mM;
    var c_T4: mM;
    c_T0 = q_T0*1e3{millimol_per_mol}/Vol;
    c_T1 = q_T1*1e3{millimol_per_mol}/Vol;
    c_T2 = q_T2*1e3{millimol_per_mol}/Vol;
    c_T3 = q_T3*1e3{millimol_per_mol}/Vol;
    c_T4 = q_T4*1e3{millimol_per_mol}/Vol;
    // Fitted parameters
    var cc_RBC_o2: mM {init: 1e2};
    var Q_RBC_o2: dim;
    Q_RBC_o2 = c_RBC_o2/cc_RBC_o2;
    var K_Ro2: mM {init: 2.1915e-2};
    var K_To2: mM {init: 1.1284};
    var K_RT0: dim {init: 0.04625};
    var lambda_R: dim;
    var lambda_T: dim;
    lambda_R = K_Ro2/cc_RBC_o2;
    lambda_T = K_To2/cc_RBC_o2;
    // Boltzmann constants
    var K_R0: per_mol {init: 1e3};
    var K_R1: per_mol;
    var K_R2: per_mol;
    var K_R3: per_mol;
    var K_R4: per_mol;
    K_R1 = lambda_R*K_R0/4{dim};
    K_R2 = sqr(lambda_R)*K_R0/6{dim};
    K_R3 = pow(lambda_R, 3{dim})*K_R0/4{dim};
    K_R4 = pow(lambda_R, 4{dim})*K_R0;
    var K_T0: per_mol;
    var K_T1: per_mol;
    var K_T2: per_mol;
    var K_T3: per_mol;
    var K_T4: per_mol;
    K_T0 = K_RT0*K_R0;
    K_T1 = K_RT0*lambda_T*K_R0/4{dim};
    K_T2 = K_RT0*sqr(lambda_T)*K_R0/6{dim};
    K_T3 = K_RT0*pow(lambda_T, 3{dim})*K_R0/4{dim};
    K_T4 = K_RT0*pow(lambda_T, 4{dim})*K_R0;
    // Non-dimensional quantities
    var Q_R0: dim;
    var Q_R1: dim;
    var Q_R2: dim;
    var Q_R3: dim;
    var Q_R4: dim;
    var Q_T0: dim;
    var Q_T1: dim;
    var Q_T2: dim;
    var Q_T3: dim;
    var Q_T4: dim;
    Q_R0 = K_R0*q_R0;
    Q_R1 = K_R1*q_R1;
    Q_R2 = K_R2*q_R2;
    Q_R3 = K_R3*q_R3;
    Q_R4 = K_R4*q_R4;
    Q_T0 = K_T0*q_T0;
    Q_T1 = K_T1*q_T1;
    Q_T2 = K_T2*q_T2;
    Q_T3 = K_T3*q_T3;
    Q_T4 = K_T4*q_T4;
    // Reactions
    var kappa: mol_per_s {init: 1e4};
    var kappa_R1: mol_per_s;
    var kappa_R2: mol_per_s;
    var kappa_R3: mol_per_s;
    var kappa_R4: mol_per_s;
    var kappa_T1: mol_per_s;
    var kappa_T2: mol_per_s;
    var kappa_T3: mol_per_s;
    var kappa_T4: mol_per_s;
    var kappa_RT0: mol_per_s;
    var kappa_RT1: mol_per_s;
    var kappa_RT2: mol_per_s;
    var kappa_RT3: mol_per_s;
    var kappa_RT4: mol_per_s;
    kappa_R1 = kappa;
    kappa_R2 = kappa;
    kappa_R3 = kappa;
    kappa_R4 = kappa;
    kappa_T1 = kappa;
    kappa_T2 = kappa;
    kappa_T3 = kappa;
    kappa_T4 = kappa;
    kappa_RT0 = kappa;
    kappa_RT1 = kappa;
    kappa_RT2 = kappa;
    kappa_RT3 = kappa;
    kappa_RT4 = kappa;
    var v_R1: mol_per_s;
    var v_R2: mol_per_s;
    var v_R3: mol_per_s;
    var v_R4: mol_per_s;
    var v_T1: mol_per_s;
    var v_T2: mol_per_s;
    var v_T3: mol_per_s;
    var v_T4: mol_per_s;
    var v_RT0: mol_per_s;
    var v_RT1: mol_per_s;
    var v_RT2: mol_per_s;
    var v_RT3: mol_per_s;
    var v_RT4: mol_per_s;
    v_R1 = kappa_R1*(Q_R0*Q_RBC_o2-Q_R1);
    v_R2 = kappa_R2*(Q_R1*Q_RBC_o2-Q_R2);
    v_R3 = kappa_R3*(Q_R2*Q_RBC_o2-Q_R3);
    v_R4 = kappa_R4*(Q_R3*Q_RBC_o2-Q_R4);
    v_T1 = kappa_T1*(Q_T0*Q_RBC_o2-Q_T1);
    v_T2 = kappa_T2*(Q_T1*Q_RBC_o2-Q_T2);
    v_T3 = kappa_T3*(Q_T2*Q_RBC_o2-Q_T3);
    v_T4 = kappa_T4*(Q_T3*Q_RBC_o2-Q_T4);
    v_RT0 = kappa_RT0*(Q_R0-Q_T0);
    v_RT1 = kappa_RT1*(Q_R1-Q_T1);
    v_RT2 = kappa_RT2*(Q_R2-Q_T2);
    v_RT3 = kappa_RT3*(Q_R3-Q_T3);
    v_RT4 = kappa_RT4*(Q_R4-Q_T4);
    // Total Hb, total oxygen and total oxygen flux
    var Hb_tot: mole;
    Hb_tot = q_R0+q_R1+q_R2+q_R3+q_R4+q_T0+q_T1+q_T2+q_T3+q_T4;
    var Hbo2_tot: mole;
    Hbo2_tot = q_R1+q_R2+q_R3+q_R4+q_T1+q_T2+q_T3+q_T4;
    var S_Hbo2: dim;
    S_Hbo2 = Hbo2_tot/Hb_tot;
    // Variables for Mass Conservation Check
    // 1. Integrate boundary flux (Gas In/Out at the mouth)
    //        var q_env_exchanged: litre {init: 0};
    //        ode(q_env_exchanged, t) = v_ins_o2;
    // 2. Integrate the chemical reaction rate (Oxygen leaving into the blood stream)
    //        var q_blood_sink: mole {init: 0};
    //        ode(q_blood_sink, t) = v_oxyHb_Rx;
    // 3. Sum the instantaneous dissolved mass (excluding the washed-out Hb)
    //        var q_dissolved_total: mole;
    //        q_dissolved_total = q_ins_o2+q_alv_o2+q_cap_o2+q_RBC_o2;
    // 4. Calculate True Conserved Mass: Current Mass - (Mass In from Air) + (Mass Out to Blood)
    //        var q_conserved_true: mole;
    //        q_conserved_true = q_dissolved_total-q_env_exchanged+q_blood_sink;
  enddef;
enddef;
