def model my_model as
  // BG CVS MVP + Finbar's ANS + Peter's Blood volume Ctl model
  def unit dim as
    unit dimensionless;
  enddef;
  def unit per_s as
    unit second {expo: -1};
  enddef;
  def unit L_per_s as
    unit litre;
    unit second {expo: -1};
  enddef;
  def unit kPa as
    unit joule;
    unit litre {expo: -1};
  enddef;
  def unit L_per_s_per_kPa as
    unit L_per_s;
    unit kPa {expo: -1};
  enddef;
  def unit kPa_per_L as
    unit kPa;
    unit litre {expo: -1};
  enddef;
  def unit kPa_s_per_L as
    unit kPa;
    unit L_per_s {expo: -1};
  enddef;
  def unit Js2_per_m5 as
    unit joule;
    unit second {expo: 2};
    unit meter {expo: -5};
  enddef;
  def unit m_per_s2 as
    unit meter;
    unit second {expo: -2};
  enddef;
  def unit fmol as
    unit mole {pref: femto};
  enddef;
  def unit per_fmol as
    unit fmol {expo: -1};
  enddef;
  def unit fmol_per_s as
    unit fmol;
    unit second {expo: -1};
  enddef;
  // New units
  def unit J_per_m3 as
    unit joule;
    unit metre {expo: -3};
  enddef;
  def unit J_per_m3s as
    unit joule;
    unit metre {expo: -3};
    unit second {expo: -1};
  enddef;
  def unit kg_per_m3 as
    unit kilogram;
    unit metre {expo: -3};
  enddef;
  def unit m3_per_J as
    unit joule {expo: -1};
    unit metre {expo: 3};
  enddef;
  def unit J2_per_m6 as
    unit joule {expo: 2};
    unit metre {expo: -6};
  enddef;
  def unit m3 as
    unit metre {expo: 3};
  enddef;
  def unit per_m3_s as
    unit metre {expo: -3};
    unit second {expo: -1};
  enddef;
  def unit kPa_per_s as
    unit kPa;
    unit second {expo: -1};
  enddef;
  // units for scale factors
  def unit J_per_m3_per_kPa as
    unit J_per_m3;
    unit kPa {expo: -1};
  enddef;
  def unit mol_per_s as
    unit mole;
    unit second {expo: -1};
  enddef;
  def unit mol_per_L as
    unit mole;
    unit litre {expo: -1};
  enddef;
  def unit mM as
    unit mol_per_L {pref: milli};
  enddef;
  def unit J_per_mol as
    unit joule;
    unit mole {expo: -1};
  enddef;
  def unit L_per_mol as
    unit litre;
    unit mole {expo: -1};
  enddef;
  def unit C_per_mol as
    unit coulomb;
    unit mole {expo: -1};
  enddef;
  def unit J_per_C as
    unit joule;
    unit coulomb {expo: -1};
  enddef;
  def unit J_per_m6 as
    unit joule;
    unit metre {expo: -6};
  enddef;
  def unit Js_per_m6 as
    unit joule;
    unit second;
    unit metre {expo: -6};
  enddef;
  def unit s2 as
    unit second {expo: 2};
  enddef;
  def unit kPa_per_L_per_J_per_m6 as
    unit kPa_per_L;
    unit J_per_m6 {expo: -1};
  enddef;
  def unit kPa_m6_per_LJ as
    unit kPa_per_L;
    unit meter {expo: 6};
    unit joule {expo: -1};
  enddef;
  def unit m3_per_kg as
    unit kilogram {expo: -1};
    unit metre {expo: 3};
  enddef;
  def unit kPa_s2_per_L as
    unit kPa;
    unit s2;
    unit litre {expo: -1};
  enddef;
  def unit per_kPa_s as
    unit kPa {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit kPa_s2_per_L2 as
    unit kPa;
    unit s2;
    unit litre {expo: -2};
  enddef;
  def unit m2 as
    unit metre {expo: 2};
  enddef;
  def unit m4 as
    unit metre {expo: 4};
  enddef;

  def comp main as
    var t: second;
    // ==================        Simulation protocol         ==============
    var q_lung_max_multiplier: dim {init: 1};
    var t_start_q_lung_amp: second {init: 0};
    var t_end_q_lung_amp: second {init: 0};
    var T_lung_multiplier: dim {init: 1};
    var t_start_T_lung: second {init: 0};
    var t_end_T_lung: second {init: 0};
    var C_CO2_multiplier: dim {init: 1};
    var t_start_C_CO2: second {init: 0};
    var t_end_C_CO2: second {init: 0};
    var C_O2_multiplier: dim {init: 1};
    var t_start_C_O2: second {init: 0};
    var t_end_C_O2: second {init: 0};
    var vagal_stim_freq: per_s {init: 0};
    var t_start_vagal_stim: second {init: 0};
    var t_end_vagal_stim: second {init: 0};
    var v_giIn_W_adder: L_per_s {init: 0};
    var t_start_v_giIn_W: second {init: 0};
    var t_end_v_giIn_W: second {init: 0};
    var v_giIn_Na_adder: mol_per_s {init: 0};
    var t_start_v_giIn_Na: second {init: 0};
    var t_end_v_giIn_Na: second {init: 0};
    s_floor = 0.5{dim};
    // ======================      The circulation model       ======================
    var rho: Js2_per_m5 {init: 1000};
    var g: m_per_s2 {init: 9.81};
    var theta_deg: dim {init: 90};
    var theta_rad: radian;
    theta_rad = theta_deg*pi/180{dim};
    var z: dim;
    z = sel
      case (t > 100{second}) and (t < 101{second}):
        1{dim};
      otherwise:
        0{dim};
    endsel;
    // ===================     The heart model      ================================
    // inputs should be coupled correspondingly
    var Delta_E_lv: kPa_per_L;
    var Delta_E_rv: kPa_per_L;
    // outputs
    var mt: dimensionless {pub: out};
    var e_a: dimensionless {pub: out};
    var e_v: dimensionless {pub: out};
    var t_astart_norm: dimensionless {pub: out};
    var s: dimensionless {init: 0.0, pub: out};
    var t_vstart_norm: dimensionless {pub: out};
    var T_wCont: second {pub: out};
    var T_ac_wCont: second {pub: out};
    var T_ar_wCont: second {pub: out};
    var T_vc_wCont: second {pub: out};
    var T_vr_wCont: second {pub: out};
    var u_ra: kPa {pub: out};
    var u_rv: kPa {pub: out};
    var u_la: kPa {pub: out};
    var u_lv: kPa {pub: out};
    var v_trv: L_per_s {init: 0, pub: out};
    var v_puv: L_per_s {init: 0, pub: out};
    var v_miv: L_per_s {init: 0, pub: out};
    var v_aov: L_per_s {init: 0, pub: out};
    var L_trv: kPa_s2_per_L;
    var L_puv: kPa_s2_per_L;
    var L_miv: kPa_s2_per_L;
    var L_aov: kPa_s2_per_L;
    var A_eff_trv: m2 {pub: out};
    var A_eff_puv: m2 {pub: out};
    var A_eff_miv: m2 {pub: out};
    var A_eff_aov: m2 {pub: out};
    var B_trv: kPa_s2_per_L2 {pub: out};
    var B_puv: kPa_s2_per_L2 {pub: out};
    var B_miv: kPa_s2_per_L2 {pub: out};
    var B_aov: kPa_s2_per_L2 {pub: out};
    var zeta_trv: dimensionless {pub: out};
    var zeta_puv: dimensionless {pub: out};
    var zeta_miv: dimensionless {pub: out};
    var zeta_aov: dimensionless {pub: out};
    var zeta_trv_pre: dimensionless {init: 0, pub: out};
    var zeta_puv_pre: dimensionless {init: 0, pub: out};
    var zeta_miv_pre: dimensionless {init: 0, pub: out};
    var zeta_aov_pre: dimensionless {init: 0, pub: out};
    var eps_m4: m4 {init: 1e-14};
    var eps_m2: m2 {init: 1e-14};
    var eps_1: dimensionless {init: 0.07};
    var eps_2: dimensionless {init: 0.02};
    var q_lv: litre {init: 0.112766528650827, pub: out};
    var q_rv: litre {init: 0.146376363134986, pub: out};
    var q_la: litre {init: 0.239567895175906, pub: out};
    var q_ra: litre {init: 0.279006748606295, pub: out};
    var chi_a: dimensionless {init: 0.0, pub: out};
    var chi_afloor: dimensionless {pub: out};
    var chi_afloor_final: dimensionless;
    var q_heart: litre {pub: out};
    var chi_v: dimensionless {init: 0.0};
    var chi_vfloor: dimensionless;
    var chi_vfloor_final: dimensionless;
    var E_rv_A_wCont: kPa_per_L {pub: out};
    var E_lv_A_wCont: kPa_per_L {pub: out};
    // constants
    var T: second {init: 1};
    var T_ac: second {init: 0.17};
    var T_ar: second {init: 0.17};
    var T_vc: second {init: 0.34};
    var T_vr: second {init: 0.15};
    var t_astart: second {init: 0.18};
    var t_vstart: second {init: 0};
    var E_lv_A: kPa_per_L {init: 204};
    var E_lv_B: kPa_per_L {init: 31};
    var E_la_A: kPa_per_L {init: 12.33};
    var E_la_B: kPa_per_L {init: 12};
    var E_rv_A: kPa_per_L {init: 25};
    var E_rv_B: kPa_per_L {init: 20};
    var E_ra_A: kPa_per_L {init: 8};
    var E_ra_B: kPa_per_L {init: 9.33};
    var q_ra_us: litre {init: 0.004};
    var q_rv_us: litre {init: 0.01};
    var q_la_us: litre {init: 0.004};
    var q_lv_us: litre {init: 0.005};
    var A_nn_trv: m2 {init: 0.0008};
    var A_nn_puv: m2 {init: 0.00071};
    var A_nn_miv: m2 {init: 0.00077};
    var A_nn_aov: m2 {init: 0.00068};
    var l_eff: metre {init: 0.02};
    var K_vo_trv: per_kPa_s {init: 300};
    var K_vo_puv: per_kPa_s {init: 200};
    var K_vo_miv: per_kPa_s {init: 300};
    var K_vo_aov: per_kPa_s {init: 120};
    var K_vc_trv: per_kPa_s {init: 400};
    var K_vc_puv: per_kPa_s {init: 200};
    var K_vc_miv: per_kPa_s {init: 400};
    var K_vc_aov: per_kPa_s {init: 120};
    var M_rg_trv: dimensionless {init: 0};
    var M_rg_puv: dimensionless {init: 0};
    var M_rg_miv: dimensionless {init: 0};
    var M_rg_aov: dimensionless {init: 0};
    var M_st_trv: dimensionless {init: 1};
    var M_st_puv: dimensionless {init: 1};
    var M_st_miv: dimensionless {init: 1};
    var M_st_aov: dimensionless {init: 1};
    var T_min: second {init: 0.25};
    // equations
    // calculate modified time due to changes in heart period. This can now be modified throughout a simulation.
    chi_afloor = chi_a-floor(chi_a);
    ode(chi_a, t) = sel
      case (mt >= t_astart_norm) and (mt <= t_astart_norm+eps_1) and (chi_afloor <= 0.25{dimensionless}):
        0.25{dimensionless}/T_ac_wCont;
      case (t_astart_norm+eps_1 > 1.0{dimensionless}) and (mt <= t_astart_norm+eps_1-1.0{dimensionless}) and (chi_afloor <= 0.25{dimensionless}):
        0.25{dimensionless}/T_ac_wCont;
      case (chi_afloor > eps_2) and (chi_afloor <= 0.25{dimensionless}):
        0.25{dimensionless}/T_ac_wCont;
      case (chi_afloor >= 0.25{dimensionless}) and (chi_afloor < 0.5{dimensionless}):
        0.25{dimensionless}/T_ar_wCont;
      case chi_afloor >= 0.5{dimensionless}:
        0.5{dimensionless}/(T_wCont-T_ac_wCont-T_ar_wCont);
      otherwise:
        0.0{per_s};
    endsel;
    chi_afloor_final = sel
      case chi_afloor <= 0.5{dimensionless}:
        chi_afloor*2{dimensionless};
      otherwise:
        0.0{dimensionless};
    endsel;
    chi_vfloor = chi_v-floor(chi_v);
    ode(chi_v, t) = sel
      case (mt >= t_vstart_norm) and (mt <= t_vstart_norm+eps_1) and (chi_vfloor <= 0.25{dimensionless}):
        0.25{dimensionless}/T_vc_wCont;
      case (t_vstart_norm+eps_1 > 1.0{dimensionless}) and (mt <= t_vstart_norm+eps_1-1.0{dimensionless}) and (chi_vfloor <= 0.25{dimensionless}):
        0.25{dimensionless}/T_vc_wCont;
      case (chi_vfloor > eps_2) and (chi_vfloor <= 0.25{dimensionless}):
        0.25{dimensionless}/T_vc_wCont;
      case (chi_vfloor > 0.25{dimensionless}) and (chi_vfloor < 0.5{dimensionless}):
        0.25{dimensionless}/T_vr_wCont;
      case chi_vfloor > 0.5{dimensionless}:
        0.5{dimensionless}/(T_wCont-T_vc_wCont-T_vr_wCont);
      otherwise:
        0.0{per_s};
    endsel;
    chi_vfloor_final = sel
      case chi_vfloor <= 0.5{dimensionless}:
        chi_vfloor*2{dimensionless};
      otherwise:
        0.0{dimensionless};
    endsel;
    ode(s, t) = 1{dimensionless}/T_wCont;
    mt = s-floor(s);
    // control effects Assume all subperiods scale linearly for now. TODO IMPROVE THIS
    T_wCont = max(T+Delta_heart_T, T_min);
    T_ac_wCont = T_ac*T_wCont/T;
    T_ar_wCont = T_ar*T_wCont/T;
    T_vc_wCont = T_vc*T_wCont/T;
    T_vr_wCont = T_vr*T_wCont/T;
    // Elastance Functions
    // TODO FIGURE OUT A REALISTIC WAY TO CONTROL t_astart and t_vstart so that it changes with changes in period
    t_astart_norm = t_astart/T;
    t_vstart_norm = t_vstart/T;
    e_a = 0.5{dimensionless}*(1{dimensionless}-cos(2{dimensionless}*pi*chi_afloor_final));
    e_v = 0.5{dimensionless}*(1{dimensionless}-cos(2{dimensionless}*pi*chi_vfloor_final));
    // Valve model
    B_trv = rho/(2{dimensionless}*sqr(A_eff_trv)+eps_m4)*1e-9{dim};
    B_puv = rho/(2{dimensionless}*sqr(A_eff_puv)+eps_m4)*1e-9{dim};
    B_miv = rho/(2{dimensionless}*sqr(A_eff_miv)+eps_m4)*1e-9{dim};
    B_aov = rho/(2{dimensionless}*sqr(A_eff_aov)+eps_m4)*1e-9{dim};
    L_trv = rho*l_eff/(A_eff_trv+eps_m2)*1e-6{dim};
    L_puv = rho*l_eff/(A_eff_puv+eps_m2)*1e-6{dim};
    L_miv = rho*l_eff/(A_eff_miv+eps_m2)*1e-6{dim};
    L_aov = rho*l_eff/(A_eff_aov+eps_m2)*1e-6{dim};
    A_eff_trv = (M_st_trv*A_nn_trv-M_rg_trv*A_nn_trv)*zeta_trv+M_rg_trv*A_nn_trv;
    A_eff_puv = (M_st_puv*A_nn_puv-M_rg_puv*A_nn_puv)*zeta_puv+M_rg_puv*A_nn_puv;
    A_eff_miv = (M_st_miv*A_nn_miv-M_rg_miv*A_nn_miv)*zeta_miv+M_rg_miv*A_nn_miv;
    A_eff_aov = (M_st_aov*A_nn_aov-M_rg_aov*A_nn_aov)*zeta_aov+M_rg_aov*A_nn_aov;
    ode(zeta_trv_pre, t) = sel
      case u_ra >= u_rv:
        (1{dimensionless}-zeta_trv_pre)*K_vo_trv*(u_ra-u_rv);
      otherwise:
        zeta_trv_pre*K_vc_trv*(u_ra-u_rv);
    endsel;
    ode(zeta_puv_pre, t) = sel
      case u_rv >= u_pulmA:
        (1{dimensionless}-zeta_puv_pre)*K_vo_puv*(u_rv-u_pulmA);
      otherwise:
        zeta_puv_pre*K_vc_puv*(u_rv-u_pulmA);
    endsel;
    ode(zeta_miv_pre, t) = sel
      case u_la >= u_lv:
        (1{dimensionless}-zeta_miv_pre)*K_vo_miv*(u_la-u_lv);
      otherwise:
        zeta_miv_pre*K_vc_miv*(u_la-u_lv);
    endsel;
    ode(zeta_aov_pre, t) = sel
      case u_lv >= u_AA:
        (1{dimensionless}-zeta_aov_pre)*K_vo_aov*(u_lv-u_AA);
      otherwise:
        zeta_aov_pre*K_vc_aov*(u_lv-u_AA);
    endsel;
    // The below ensures zeta can't be negative
    zeta_trv = max(zeta_trv_pre, 0{dimensionless});
    zeta_puv = max(zeta_puv_pre, 0{dimensionless});
    zeta_miv = max(zeta_miv_pre, 0{dimensionless});
    zeta_aov = max(zeta_aov_pre, 0{dimensionless});
    // calculate the flow through the valves
    ode(v_trv, t) = (-B_trv*v_trv*abs(v_trv)+u_ra-u_rv)/L_trv;
    ode(v_puv, t) = (-B_puv*v_puv*abs(v_puv)+u_rv-u_pulmA)/L_puv;
    ode(v_miv, t) = (-B_miv*v_miv*abs(v_miv)+u_la-u_lv)/L_miv;
    ode(v_aov, t) = (-B_aov*v_aov*abs(v_aov)+u_lv-u_AA)/L_aov;
    // Control from sympathetic
    Delta_E_rv = 1e-6{kPa_per_L_per_J_per_m6}*Delta_rv_Emax;
    Delta_E_lv = 1e-6{kPa_per_L_per_J_per_m6}*Delta_lv_Emax;
    E_rv_A_wCont = E_rv_A+Delta_E_rv;
    E_lv_A_wCont = E_lv_A+Delta_E_lv;
    // Constitutive Relations
    u_ra = (e_a*E_ra_A+E_ra_B)*(q_ra-q_ra_us);
    u_rv = (e_v*E_rv_A_wCont+E_rv_B)*(q_rv-q_rv_us);
    u_la = (e_a*E_la_A+E_la_B)*(q_la-q_la_us);
    u_lv = (e_v*E_lv_A_wCont+E_lv_B)*(q_lv-q_lv_us);
    // Conservation Laws
    ode(q_ra, t) = v_V_svc-v_trv;
    ode(q_rv, t) = v_trv-v_puv;
    ode(q_la, t) = v_pulmV-v_miv;
    ode(q_lv, t) = v_miv-v_aov;
    q_heart = q_ra+q_rv+q_la+q_lv;
    // Lungs
    var q_pulmA: litre {init: 0.214137763398973};
    var q_pulmA_us: litre {init: 0.2};
    var u_pulmA: kPa;
    var E_pulmA: kPa_per_L {init: 200};
    var L_pulmA: liter {init: 0.5};
    // TODO: must be replaced with physiological value
    ode(q_pulmA, t) = v_puv-v_lungA;
    u_pulmA = E_pulmA*(q_pulmA-q_pulmA_us);
    // // -> changing to non-linear elastic J-shape curve
    // u_pulmA = E_pulmA*(q_pulmA-q_pulmA_us)/sqr(L_pulmA-q_pulmA);
    var v_lungA: L_per_s;
    var R_lungA: kPa_s_per_L {init: 1};
    v_lungA = (u_pulmA-u_lungC)/R_lungA;
    var q_lungC: litre {init: 0.214135916274659};
    var q_lungC_us: litre {init: 0.2};
    var u_lungC: kPa;
    var E_lungC: kPa_per_L {init: 200};
    var L_lungC: liter {init: 1};
    // TODO: must be replaced with physiological value
    ode(q_lungC, t) = v_lungA-v_pulmV;
    u_lungC = E_lungC*(q_lungC-q_lungC_us);
    // // -> changing to non-linear elastic J-shape curve
    // u_lungC = E_lungC*(q_lungC-q_lungC_us)/sqr(L_lungC-q_lungC);
    var v_pulmV: L_per_s;
    var R_pulmV: kPa_s_per_L {init: 1};
    v_pulmV = (u_lungC-u_la)/R_pulmV;
    // Ascending aorta
    var q_AA: litre {init: 0.142264060695876};
    var q_AA_us: litre {init: 0.12};
    var u_AA: kPa;
    var E_AA: kPa_per_L {init: 300};
    var L_AA: liter {init: 3};
    // TODO: must be replaced with physiological value
    var duAA_dt: kPa_per_s;
    ode(q_AA, t) = v_aov-v_A1-v_brachiocephalicA-v_lCCA-v_lSubclavianA;
    u_AA = E_AA*(q_AA-q_AA_us);
    // // -> changing to non-linear elastic J-shape curve
    // u_AA = E_AA*(q_AA-q_AA_us)/sqr(L_AA-q_AA);
    // calculate duAA_dt using chain rule
    duAA_dt = E_AA*(q_AA-2{dim}*q_AA_us+L_AA)/pow(L_AA-q_AA, 3{dim})*(v_aov-v_A1-v_brachiocephalicA-v_lCCA-v_lSubclavianA);
    // Head and neck
    var v_brachiocephalicA: L_per_s;
    var R_brachiocephalicA: kPa_s_per_L {init: 100};
    v_brachiocephalicA = (u_AA-u_brachiocephalicA)/R_brachiocephalicA;
    var q_brachiocephalicA: litre {init: 0.233240414233821};
    var q_brachiocephalicA_us: litre {init: 0.2};
    var u_brachiocephalicA: kPa;
    var E_brachiocephalicA: kPa_per_L {init: 200};
    var L_brachiocephalicA: liter {init: 1};
    // TODO: must be replaced with physiological value
    ode(q_brachiocephalicA, t) = v_brachiocephalicA-v_rSubclavianA-v_rCCA;
    u_brachiocephalicA = E_brachiocephalicA*(q_brachiocephalicA-q_brachiocephalicA_us);
    // -> changing to non-linear elastic J-shape curve
    // u_brachiocephalicA = E_brachiocephalicA*(q_brachiocephalicA-q_brachiocephalicA_us)/sqr(L_brachiocephalicA-q_brachiocephalicA);
    var v_rSubclavianA: L_per_s;
    var R_rSubclavianA: kPa_s_per_L {init: 100};
    v_rSubclavianA = (u_brachiocephalicA-u_rSubclavianA)/R_rSubclavianA;
    var v_rCCA: L_per_s;
    var R_rCCA: kPa_s_per_L {init: 100};
    v_rCCA = (u_brachiocephalicA-u_headC)/R_rCCA;
    var q_rSubclavianA: litre {init: 0.231577923925438};
    var q_rSubclavianA_us: litre {init: 0.2};
    var u_rSubclavianA: kPa;
    var E_rSubclavianA: kPa_per_L {init: 200};
    var L_rSubclavianA: liter {init: 1};
    // TODO: must be replaced with physiological value
    ode(q_rSubclavianA, t) = v_rSubclavianA-v_rBrachialA-v_rVertebralA;
    u_rSubclavianA = E_rSubclavianA*(q_rSubclavianA-q_rSubclavianA_us);
    // -> changing to non-linear elastic J-shape curve
    // u_rSubclavianA = E_rSubclavianA*(q_rSubclavianA-q_rSubclavianA_us)/sqr(L_rSubclavianA-q_rSubclavianA);
    var v_rBrachialA: L_per_s;
    var R_rBrachialA: kPa_s_per_L {init: 100};
    v_rBrachialA = (u_rSubclavianA-u_rArmC)/R_rBrachialA;
    var v_rVertebralA: L_per_s;
    var R_rVertebralA: kPa_s_per_L {init: 100};
    v_rVertebralA = (u_rSubclavianA-u_headC)/R_rVertebralA;
    var v_lCCA: L_per_s;
    var R_lCCA: kPa_s_per_L {init: 100};
    v_lCCA = (u_AA-u_headC)/R_lCCA;
    var v_lSubclavianA: L_per_s;
    var R_lSubclavianA: kPa_s_per_L {init: 100};
    v_lSubclavianA = (u_AA-u_lSubclavianA)/R_lSubclavianA;
    var q_lSubclavianA: litre {init: 0.233275426153994};
    var q_lSubclavianA_us: litre {init: 0.2};
    var u_lSubclavianA: kPa;
    var E_lSubclavianA: kPa_per_L {init: 200};
    var L_lSubclavianA: liter {init: 1};
    // TODO: must be replaced with physiological value
    ode(q_lSubclavianA, t) = v_lSubclavianA-v_lBrachialA-v_lVertebralA;
    u_lSubclavianA = E_lSubclavianA*(q_lSubclavianA-q_lSubclavianA_us);
    // -> changing to non-linear elastic J-shape curve
    // u_lSubclavianA = E_lSubclavianA*(q_lSubclavianA-q_lSubclavianA_us)/sqr(L_lSubclavianA-q_lSubclavianA);
    var v_lBrachialA: L_per_s;
    var R_lBrachialA: kPa_s_per_L {init: 100};
    v_lBrachialA = (u_lSubclavianA-u_lArmC)/R_lBrachialA;
    var v_lVertebralA: L_per_s;
    var R_lVertebralA: kPa_s_per_L {init: 100};
    v_lVertebralA = (u_lSubclavianA-u_headC)/R_lVertebralA;
    var q_headC: litre {init: 0.229695685892196};
    var q_headC_us: litre {init: 0.2};
    var u_headC: kPa;
    var E_headC: kPa_per_L {init: 200};
    var L_headC: liter {init: 1};
    // TODO: must be replaced with physiological value
    ode(q_headC, t) = v_rVertebralA+v_rCCA+v_lCCA+v_lVertebralA-v_headV;
    u_headC = E_headC*(q_headC-q_headC_us);
    // -> changing to non-linear elastic J-shape curve
    // u_headC = E_headC*(q_headC-q_headC_us)/sqr(L_headC-q_headC);
    var v_headV: L_per_s;
    var R_headV: kPa_s_per_L {init: 100};
    v_headV = (u_headC-u_ra)/R_headV;
    // Left arm
    var q_lArmC: litre {init: 0.102541820133863};
    var q_lArmC_us: litre {init: 0.06};
    var u_lArmC: kPa;
    var E_lArmC: kPa_per_L {init: 150};
    var L_lArmC: liter {init: 1};
    // TODO: must be replaced with physiological value
    ode(q_lArmC, t) = v_lBrachialA-v_lArmV;
    u_lArmC = E_lArmC*(q_lArmC-q_lArmC_us);
    // -> changing to non-linear elastic J-shape curve
    // u_lArmC = E_lArmC*(q_lArmC-q_lArmC_us)/sqr(L_lArmC-q_lArmC);
    var v_lArmV: L_per_s;
    var R_lArmV: kPa_s_per_L {init: 100};
    var R_lArmV_cont: kPa_s_per_L;
    // controlling and modulating the resistance by ANS
    // unit conversion is needed fpr Delta_armLeg_theta
    R_lArmV_cont = R_lArmV+1e-6{kPa_m6_per_LJ}*Delta_armLeg_theta;
    v_lArmV = (u_lArmC-u_ra)/R_lArmV_cont;
    // Right arm
    var q_rArmC: litre {init: 0.099182618684027};
    var q_rArmC_us: litre {init: 0.06};
    var u_rArmC: kPa;
    var E_rArmC: kPa_per_L {init: 150};
    var L_rArmC: liter {init: 1};
    // TODO: must be replaced with physiological value
    ode(q_rArmC, t) = v_rBrachialA-v_rArmV;
    u_rArmC = E_rArmC*(q_rArmC-q_rArmC_us);
    // -> changing to non-linear elastic J-shape curve
    // u_rArmC = E_rArmC*(q_rArmC-q_rArmC_us)/sqr(L_rArmC-q_rArmC);
    var v_rArmV: L_per_s;
    var R_rArmV: kPa_s_per_L {init: 100};
    var R_rArmV_cont: kPa_s_per_L;
    // controlling and modulating the resistance by ANS
    // unit conversion is needed fpr Delta_armLeg_theta
    R_rArmV_cont = R_rArmV+1e-6{kPa_m6_per_LJ}*Delta_armLeg_theta;
    v_rArmV = (u_rArmC-u_ra)/R_rArmV_cont;
    // superior Vena Cava
    var q_V_svc: litre {init: 0.0590918013604046};
    var q_V_svc_us: litre {init: 0.06};
    var q_V_svc_usCtl: litre;
    var v_V_svc: L_per_s;
    var u_V_svc: kPa;
    ode(q_V_svc, t) = v_rArmV+v_lArmV+v_headV-v_V_svc;
    var E_V_svc: kPa_per_L {init: 400};
    var E_V_svcCtl: kPa_per_L;
    q_V_svc_usCtl = q_V_svc_us*(1{dim}-Delta_theta_us);
    E_V_svcCtl = E_V_svc/(1{dim}-Delta_theta_compliance);
    u_V_svc = E_V_svcCtl*(q_V_svc-q_V_svc_usCtl);
    var R_V_svc: kPa_s_per_L {init: 100};
    v_V_svc = (u_V_svc-u_ra)/R_V_svc;
    // Descending aorta
    var q_A1: litre {init: 0.0655014207952843};
    var q_A1_us: litre {init: 0.06};
    var q_A2: litre {init: 0.0652519890852715};
    var q_A2_us: litre {init: 0.06};
    var q_A3: litre {init: 0.064936890804412};
    var q_A3_us: litre {init: 0.06};
    var q_A4: litre {init: 0.064764394713176};
    var q_A4_us: litre {init: 0.06};
    var q_A5: litre {init: 0.0646557102522954};
    var q_A5_us: litre {init: 0.06};
    var q_A6: litre {init: 0.0646172111647582};
    var q_A6_us: litre {init: 0.06};
    var q_A7: litre {init: 0.0646190756813971};
    var q_A7_us: litre {init: 0.06};
    var q_A8: litre {init: 0.0645913289978467};
    var q_A8_us: litre {init: 0.06};
    var v_A1: L_per_s;
    var v_A2: L_per_s;
    var v_A3: L_per_s;
    var v_A4: L_per_s;
    var v_A5: L_per_s;
    var v_A6: L_per_s;
    var v_A7: L_per_s;
    var v_A8: L_per_s;
    ode(q_A1, t) = v_A1-v_A2-v_lInfPhrenicA;
    ode(q_A2, t) = v_A2-v_A3-v_rInfPhrenicA;
    ode(q_A3, t) = v_A3-v_A4-v_celiacA;
    ode(q_A4, t) = v_A4-v_A5-v_supMesA;
    ode(q_A5, t) = v_A5-v_A6-v_lRenalA;
    ode(q_A6, t) = v_A6-v_A7-v_rRenalA;
    ode(q_A7, t) = v_A7-v_A8-v_infMesA;
    ode(q_A8, t) = v_A8-v_lCommonIliacA-v_rCommonIliacA;
    var u_A1: kPa;
    var u_A2: kPa;
    var u_A3: kPa;
    var u_A4: kPa;
    var u_A5: kPa;
    var u_A6: kPa;
    var u_A7: kPa;
    var u_A8: kPa;
    var E_A1: kPa_per_L {init: 400};
    var E_A2: kPa_per_L {init: 400};
    var E_A3: kPa_per_L {init: 400};
    var E_A4: kPa_per_L {init: 400};
    var E_A5: kPa_per_L {init: 400};
    var E_A6: kPa_per_L {init: 400};
    var E_A7: kPa_per_L {init: 400};
    var E_A8: kPa_per_L {init: 400};
    // These parameters below should be chosen physiologically realistic
    var L_A1: litre {init: 0.1};
    var L_A2: litre {init: 0.1};
    var L_A3: litre {init: 0.1};
    var L_A4: litre {init: 0.1};
    var L_A5: litre {init: 0.1};
    var L_A6: litre {init: 0.1};
    var L_A7: litre {init: 0.1};
    var L_A8: litre {init: 0.1};
    // changing to non-linear elastic J-shape curve
    u_A1 = E_A1*(q_A1-q_A1_us);
    u_A2 = E_A2*(q_A2-q_A2_us);
    u_A3 = E_A3*(q_A3-q_A3_us);
    u_A4 = E_A4*(q_A4-q_A4_us);
    u_A5 = E_A5*(q_A5-q_A5_us);
    u_A6 = E_A6*(q_A6-q_A6_us);
    u_A7 = E_A7*(q_A7-q_A7_us);
    u_A8 = E_A8*(q_A8-q_A8_us);
    // u_A1 = E_A1*(q_A1-q_A1_us)/sqr(L_A1-q_A1);
    // u_A2 = E_A2*(q_A2-q_A2_us)/sqr(L_A2-q_A2);
    // u_A3 = E_A3*(q_A3-q_A2_us)/sqr(L_A3-q_A3);
    // u_A4 = E_A4*(q_A4-q_A4_us)/sqr(L_A4-q_A4);
    // u_A5 = E_A5*(q_A5-q_A5_us)/sqr(L_A5-q_A5);
    // u_A6 = E_A6*(q_A6-q_A6_us)/sqr(L_A6-q_A6);
    // u_A7 = E_A7*(q_A7-q_A7_us)/sqr(L_A7-q_A7);
    // u_A8 = E_A8*(q_A8-q_A8_us)/sqr(L_A8-q_A8);
    var R_A1: kPa_s_per_L {init: 10000000};
    var R_A2: kPa_s_per_L {init: 100};
    var R_A3: kPa_s_per_L {init: 100};
    var R_A4: kPa_s_per_L {init: 100};
    var R_A5: kPa_s_per_L {init: 100};
    var R_A6: kPa_s_per_L {init: 100};
    var R_A7: kPa_s_per_L {init: 100};
    var R_A8: kPa_s_per_L {init: 100};
    v_A1 = (u_AA-u_A1)/R_A1;
    v_A2 = (u_A1-u_A2)/R_A2;
    v_A3 = (u_A2-u_A3)/R_A3;
    v_A4 = (u_A3-u_A4)/R_A4;
    v_A5 = (u_A4-u_A5)/R_A5;
    v_A6 = (u_A5-u_A6)/R_A6;
    v_A7 = (u_A6-u_A7)/R_A7;
    v_A8 = (u_A7-u_A8)/R_A8;
    // Left phrenic branch of the aorta
    var v_lInfPhrenicA: L_per_s;
    var R_lInfPhrenicA: kPa_s_per_L {init: 100};
    v_lInfPhrenicA = (u_A1-u_lAdrenalGlandC)/R_lInfPhrenicA;
    var q_lAdrenalGlandC: litre {init: 0.211522984819647};
    var q_lAdrenalGlandC_us: litre {init: 0.2};
    var u_lAdrenalGlandC: kPa;
    var E_lAdrenalGlandC: kPa_per_L {init: 200};
    var L_lAdrenalGlandC: liter {init: 0.5};
    // TODO: must be replaced with physiological value
    ode(q_lAdrenalGlandC, t) = v_lInfPhrenicA-v_lAdrenalV;
    u_lAdrenalGlandC = E_lAdrenalGlandC*(q_lAdrenalGlandC-q_lAdrenalGlandC_us);
    // -> changing to non-linear elastic J-shape curve
    // u_lAdrenalGlandC = E_lAdrenalGlandC*(q_lAdrenalGlandC-q_lAdrenalGlandC_us)/sqr(L_lAdrenalGlandC-q_lAdrenalGlandC);
    var v_lAdrenalV: L_per_s;
    var R_lAdrenalV: kPa_s_per_L {init: 100};
    v_lAdrenalV = (u_lAdrenalGlandC-u_lInfPhrenicV)/R_lAdrenalV;
    var q_lInfPhrenicV: litre {init: 0.21197645430359};
    var q_lInfPhrenicV_us: litre {init: 0.2};
    var u_lInfPhrenicV: kPa;
    var E_lInfPhrenicV: kPa_per_L {init: 200};
    var L_lInfPhrenicV: liter {init: 0.5};
    // TODO: must be replaced with physiological value
    ode(q_lInfPhrenicV, t) = v_lAdrenalV-v_lInfPhrenicV;
    u_lInfPhrenicV = E_lInfPhrenicV*(q_lInfPhrenicV-q_lInfPhrenicV_us);
    // -> changing to non-linear elastic J-shape curve
    // u_lInfPhrenicV = E_lInfPhrenicV*(q_lInfPhrenicV-q_lInfPhrenicV_us)/sqr(L_lInfPhrenicV-q_lInfPhrenicV);
    var v_lInfPhrenicV: L_per_s;
    var R_lInfPhrenicV: kPa_s_per_L {init: 100};
    v_lInfPhrenicV = (u_lInfPhrenicV-u_V1)/R_lInfPhrenicV;
    // Right phrenic branch of the aorta
    var v_rInfPhrenicA: L_per_s;
    var R_rInfPhrenicA: kPa_s_per_L {init: 100};
    v_rInfPhrenicA = (u_A2-u_rAdrenalGlandC)/R_rInfPhrenicA;
    var q_rAdrenalGlandC: litre {init: 0.210660642867376};
    var q_rAdrenalGlandC_us: litre {init: 0.2};
    var u_rAdrenalGlandC: kPa;
    var E_rAdrenalGlandC: kPa_per_L {init: 200};
    var L_rAdrenalGlandC: liter {init: 0.5};
    // TODO: must be replaced with physiological value
    ode(q_rAdrenalGlandC, t) = v_rInfPhrenicA-v_rAdrenalV;
    u_rAdrenalGlandC = E_rAdrenalGlandC*(q_rAdrenalGlandC-q_rAdrenalGlandC_us);
    // -> changing to non-linear elastic J-shape curve
    // u_rAdrenalGlandC = E_rAdrenalGlandC*(q_rAdrenalGlandC-q_rAdrenalGlandC_us)/sqr(L_rAdrenalGlandC-q_rAdrenalGlandC);
    var v_rAdrenalV: L_per_s;
    var R_rAdrenalV: kPa_s_per_L {init: 100};
    v_rAdrenalV = (u_rAdrenalGlandC-u_rInfPhrenicV)/R_rAdrenalV;
    var q_rInfPhrenicV: litre {init: 0.2108467714177};
    var q_rInfPhrenicV_us: litre {init: 0.2};
    var u_rInfPhrenicV: kPa;
    var E_rInfPhrenicV: kPa_per_L {init: 200};
    var L_rInfPhrenicV: liter {init: 0.5};
    // TODO: must be replaced with physiological value
    ode(q_rInfPhrenicV, t) = v_rAdrenalV-v_rInfPhrenicV;
    u_rInfPhrenicV = E_rInfPhrenicV*(q_rInfPhrenicV-q_rInfPhrenicV_us);
    // -> changing to non-linear elastic J-shape curve
    // u_rInfPhrenicV = E_rInfPhrenicV*(q_rInfPhrenicV-q_rInfPhrenicV_us)/sqr(L_rInfPhrenicV-q_rInfPhrenicV);
    var v_rInfPhrenicV: L_per_s;
    var R_rInfPhrenicV: kPa_s_per_L {init: 100};
    v_rInfPhrenicV = (u_rInfPhrenicV-u_V2)/R_rInfPhrenicV;
    // Celiac branch of the aorta
    var v_celiacA: L_per_s;
    var R_celiacA: kPa_s_per_L {init: 100};
    v_celiacA = (u_A3-u_celiacA)/R_celiacA;
    var q_celiacA: litre {init: 0.0648036854386729};
    var q_celiacA_us: litre {init: 0.06};
    var u_celiacA: kPa;
    var E_celiacA: kPa_per_L {init: 400};
    var L_celiacA: liter {init: 0.1};
    // TODO: must be replaced with physiological value
    // z_celiacA is not used! ...
    var z_celiacA: meter {init: 0.2};
    ode(q_celiacA, t) = v_celiacA-v_liverA-v_stomachA-v_spleenA-v_pancreas1A;
    u_celiacA = E_celiacA*(q_celiacA-q_celiacA_us);
    // -> changing to non-linear elastic J-shape curve
    // u_celiacA = E_celiacA*(q_celiacA-q_celiacA_us)/sqr(L_celiacA-q_celiacA);
    // Superior mesentery branch of the aorta
    var v_supMesA: L_per_s;
    var R_supMesA: kPa_s_per_L {init: 100};
    v_supMesA = (u_A4-u_supMesA)/R_supMesA;
    var q_supMesA: litre {init: 0.0647072721128623};
    var q_supMesA_us: litre {init: 0.06};
    var u_supMesA: kPa;
    var E_supMesA: kPa_per_L {init: 400};
    var L_supMesA: liter {init: 0.1};
    // TODO: must be replaced with physiological value
    // z_supMesA is not used !!!
    var z_supMesA: meter {init: 0.2};
    ode(q_supMesA, t) = v_supMesA-v_pancreas2A-v_intestineA-v_colonA;
    u_supMesA = E_supMesA*(q_supMesA-q_supMesA_us);
    // -> changing to non-linear elastic J-shape curve
    // u_supMesA = E_supMesA*(q_supMesA-q_supMesA_us)/sqr(L_supMesA-q_supMesA);
    // Left renal branch of the aorta
    var v_lRenalA: L_per_s;
    var R_lRenalA: kPa_s_per_L {init: 100};
    v_lRenalA = (u_A5-u_lGlomerulusC)/R_lRenalA;
    var q_lGlomerulusC: litre {init: 0.209180294745141};
    var q_lGlomerulusC_us: litre {init: 0.2};
    var u_lGlomerulusC: kPa;
    var E_lGlomerulusC: kPa_per_L {init: 200};
    var L_lGlomerulusC: liter {init: 0.5};
    // TODO: must be replaced with physiological value
    ode(q_lGlomerulusC, t) = v_lRenalA-v_lEffArteriol-v_lgl_W;
    u_lGlomerulusC = E_lGlomerulusC*(q_lGlomerulusC-q_lGlomerulusC_us);
    // -> changing to non-linear elastic J-shape curve
    // u_lGlomerulusC = E_lGlomerulusC*(q_lGlomerulusC-q_lGlomerulusC_us)/sqr(L_lGlomerulusC-q_lGlomerulusC);
    var v_lEffArteriol: L_per_s;
    var R_lEffArteriol: kPa_s_per_L {init: 100};
    v_lEffArteriol = (u_lGlomerulusC-u_lPeritubularC)/R_lEffArteriol;
    var q_lPeritubularC: litre {init: 0.209308644394173};
    var q_lPeritubularC_us: litre {init: 0.2};
    var u_lPeritubularC: kPa;
    var E_lPeritubularC: kPa_per_L {init: 200};
    var L_lPeritubularC: liter {init: 0.5};
    // TODO: must be replaced with physiological value
    ode(q_lPeritubularC, t) = v_lEffArteriol-v_lRenalV+v_rpt_W;
    u_lPeritubularC = E_lPeritubularC*(q_lPeritubularC-q_lPeritubularC_us);
    // -> changing to non-linear elastic J-shape curve
    // u_lPeritubularC = E_lPeritubularC*(q_lPeritubularC-q_lPeritubularC_us)/sqr(L_lPeritubularC-q_lPeritubularC);
    var v_lRenalV: L_per_s;
    var R_lRenalV: kPa_s_per_L {init: 100};
    v_lRenalV = (u_lPeritubularC-u_V4)/R_lRenalV;
    // Right renal branch of the aorta
    var v_rRenalA: L_per_s;
    var R_rRenalA: kPa_s_per_L {init: 100};
    v_rRenalA = (u_A6-u_rGlomerulusC)/R_rRenalA;
    var q_rGlomerulusC: litre {init: 0.209161525112732};
    var q_rGlomerulusC_us: litre {init: 0.2};
    var u_rGlomerulusC: kPa;
    var E_rGlomerulusC: kPa_per_L {init: 200};
    var L_rGlomerulusC: liter {init: 0.5};
    // TODO: must be replaced with physiological value
    ode(q_rGlomerulusC, t) = v_rRenalA-v_rEffArteriol-v_rgl_W;
    u_rGlomerulusC = E_rGlomerulusC*(q_rGlomerulusC-q_rGlomerulusC_us);
    // -> changing to non-linear elastic J-shape curve
    // u_rGlomerulusC = E_rGlomerulusC*(q_rGlomerulusC-q_rGlomerulusC_us)/sqr(L_rGlomerulusC-q_rGlomerulusC);
    var v_rEffArteriol: L_per_s;
    var R_rEffArteriol: kPa_s_per_L {init: 100};
    v_rEffArteriol = (u_rGlomerulusC-u_rPeritubularC)/R_rEffArteriol;
    var q_rPeritubularC: litre {init: 0.209246205413079};
    var q_rPeritubularC_us: litre {init: 0.2};
    var u_rPeritubularC: kPa;
    var E_rPeritubularC: kPa_per_L {init: 200};
    var L_rPeritubularC: liter {init: 0.5};
    // TODO: must be replaced with physiological value
    ode(q_rPeritubularC, t) = v_rEffArteriol-v_rRenalV+v_rpt_W;
    u_rPeritubularC = E_rPeritubularC*(q_rPeritubularC-q_rPeritubularC_us);
    // -> changing to non-linear elastic J-shape curve
    // u_rPeritubularC = E_rPeritubularC*(q_rPeritubularC-q_rPeritubularC_us)/sqr(L_rPeritubularC-q_rPeritubularC);
    var v_rRenalV: L_per_s;
    var R_rRenalV: kPa_s_per_L {init: 100};
    v_rRenalV = (u_rPeritubularC-u_V5)/R_rRenalV;
    // Inferior mesentery branch of the aorta
    var v_infMesA: L_per_s;
    var R_infMesA: kPa_s_per_L {init: 100};
    v_infMesA = (u_A7-u_colonC)/R_infMesA;
    // Stomach
    var v_stomachA: L_per_s;
    var R_stomachA: kPa_s_per_L {init: 100};
    v_stomachA = (u_celiacA-u_stomachC)/R_stomachA;
    var q_stomachC: litre {init: 0.0790768218499519};
    var q_stomachC_us: litre {init: 0.06};
    var u_stomachC: kPa;
    var E_stomachC: kPa_per_L {init: 100};
    var L_stomachC: liter {init: 0.2};
    // TODO: must be replaced with physiological value
    var z_stomachC: meter {init: 0.2};
    ode(q_stomachC, t) = v_stomachA-v_stomachV;
    u_stomachC = E_stomachC*(q_stomachC-q_stomachC_us);
    // -> changing to non-linear elastic J-shape curve
    // u_stomachC = E_stomachC*(q_stomachC-q_stomachC_us)/sqr(L_stomachC-q_stomachC);
    var v_stomachV: L_per_s;
    var R_stomachV: kPa_s_per_L {init: 2400};
    v_stomachV = (u_stomachC-u_portalV)/R_stomachV;
    // Spleen
    var v_spleenA: L_per_s;
    var R_spleenA: kPa_s_per_L {init: 100};
    v_spleenA = (u_celiacA-u_spleenC)/R_spleenA;
    var q_spleenC: litre {init: 0.0790772585865845};
    var q_spleenC_us: litre {init: 0.06};
    var u_spleenC: kPa;
    var E_spleenC: kPa_per_L {init: 100};
    var L_spleenC: liter {init: 0.2};
    // TODO: must be replaced with physiological value
    var z_spleenC: meter {init: 0.2};
    ode(q_spleenC, t) = v_spleenA-v_spleenV;
    u_spleenC = E_spleenC*(q_spleenC-q_spleenC_us);
    // -> changing to non-linear elastic J-shape curve
    // u_spleenC = E_spleenC*(q_spleenC-q_spleenC_us)/sqr(L_spleenC-q_spleenC);
    var v_spleenV: L_per_s;
    var R_spleenV: kPa_s_per_L {init: 3000};
    v_spleenV = (u_spleenC-u_portalV)/R_spleenV;
    // Pancreas
    var v_pancreas1A: L_per_s;
    var v_pancreas2A: L_per_s;
    var R_pancreas1A: kPa_s_per_L {init: 100};
    var R_pancreas2A: kPa_s_per_L {init: 100};
    v_pancreas1A = (u_celiacA-u_pancreasC)/R_pancreas1A;
    v_pancreas2A = (u_supMesA-u_pancreasC)/R_pancreas2A;
    var q_pancreasC: litre {init: 0.0789620299147939};
    var q_pancreasC_us: litre {init: 0.06};
    var u_pancreasC: kPa;
    var E_pancreasC: kPa_per_L {init: 100};
    var L_pancreasC: liter {init: 0.2};
    // TODO: must be replaced with physiological value
    var z_pancreasC: meter {init: 0.2};
    ode(q_pancreasC, t) = v_pancreas1A+v_pancreas2A-v_pancreasV;
    u_pancreasC = E_pancreasC*(q_pancreasC-q_pancreasC_us);
    // -> changing to non-linear elastic J-shape curve
    // u_pancreasC = E_pancreasC*(q_pancreasC-q_pancreasC_us)/sqr(L_pancreasC-q_pancreasC);
    var v_pancreasV: L_per_s;
    var R_pancreasV: kPa_s_per_L {init: 4000};
    v_pancreasV = (u_pancreasC-u_portalV)/R_pancreasV;
    // Intestine
    var v_intestineA: L_per_s;
    var R_intestineA: kPa_s_per_L {init: 100};
    v_intestineA = (u_supMesA-u_intestineC)/R_intestineA;
    var q_intestineC: litre {init: 0.0787096323180918};
    var q_intestineC_us: litre {init: 0.06};
    var u_intestineC: kPa;
    var E_intestineC: kPa_per_L {init: 100};
    var L_intestineC: liter {init: 0.53};
    // TODO: must be replaced with physiological value
    var z_: meter {init: 0.2};
    ode(q_intestineC, t) = v_intestineA-v_intestineV+v_gi_W;
    u_intestineC = E_intestineC*(q_intestineC-q_intestineC_us);
    // -> changing to non-linear elastic J-shape curve
    // u_intestineC = E_intestineC*(q_intestineC-q_intestineC_us)/sqr(L_intestineC-q_intestineC);
    var v_intestineV: L_per_s;
    var R_intestineV: kPa_s_per_L {init: 1200};
    v_intestineV = (u_intestineC-u_portalV)/R_intestineV;
    // Colon
    var v_colonA: L_per_s;
    var R_colonA: kPa_s_per_L {init: 100};
    v_colonA = (u_supMesA-u_colonC)/R_colonA;
    var q_colonC: litre {init: 0.0786147854601635};
    var q_colonC_us: litre {init: 0.06};
    var u_colonC: kPa;
    var E_colonC: kPa_per_L {init: 100};
    var L_colonC: liter {init: 0.2};
    // TODO: must be replaced with physiological value
    var z_colonC: meter {init: 0.2};
    ode(q_colonC, t) = v_colonA+v_infMesA-v_colonV;
    u_colonC = E_colonC*(q_colonC-q_colonC_us);
    // -> changing to non-linear elastic J-shape curve
    // u_colonC = E_colonC*(q_colonC-q_colonC_us)/sqr(L_colonC-q_colonC);
    var v_colonV: L_per_s;
    var R_colonV: kPa_s_per_L {init: 2000};
    v_colonV = (u_colonC-u_portalV)/R_colonV;
    // Portal vein
    var q_portalV: litre {init: 0.0981107873540684};
    var q_portalV_us: litre {init: 0.06};
    var u_portalV: kPa;
    var E_portalV: kPa_per_L {init: 50};
    var L_portalV: liter {init: 0.3};
    // TODO: must be replaced with physiological value
    var z_portalV: meter {init: 0.2};
    ode(q_portalV, t) = v_stomachV+v_spleenV+v_pancreasV+v_intestineV+v_colonV-v_portalV;
    u_portalV = E_portalV*(q_portalV-q_portalV_us);
    // -> changing to non-linear elastic J-shape curve
    // u_portalV = E_portalV*(q_portalV-q_portalV_us)/sqr(L_portalV-q_portalV);
    var v_portalV: L_per_s;
    var R_portalV: kPa_s_per_L {init: 100};
    v_portalV = (u_portalV-u_liverC)/R_portalV;
    // Liver
    var v_liverA: L_per_s;
    var R_liverA: kPa_s_per_L {init: 800};
    v_liverA = (u_celiacA-u_liverC)/R_liverA;
    var q_liverC: litre {init: 0.254478768636093};
    var q_liverC_us: litre {init: 0.06};
    var u_liverC: kPa;
    var E_liverC: kPa_per_L {init: 10};
    var L_liverC: liter {init: 1};
    // TODO: must be replaced with physiological value
    var z_liverC: meter {init: -0.5};
    ode(q_liverC, t) = v_liverA+v_portalV-v_liverV;
    u_liverC = E_liverC*(q_liverC-q_liverC_us);
    // -> changing to non-linear elastic J-shape curve
    // u_liverC = E_liverC*(q_liverC-q_liverC_us)/sqr(L_liverC-q_liverC);
    var v_liverV: L_per_s;
    var R_liverV: kPa_s_per_L {init: 1};
    v_liverV = (u_liverC-u_V3)/R_liverV;
    // Inferior vena cava
    var q_V1: litre {init: 0.0659701328834496};
    var q_V1_us: litre {init: 0.06};
    var q_V2: litre {init: 0.0654476623947056};
    var q_V2_us: litre {init: 0.06};
    var q_V3: litre {init: 0.0648663362575297};
    var q_V3_us: litre {init: 0.06};
    var q_V4: litre {init: 0.06472908785487};
    var q_V4_us: litre {init: 0.06};
    var q_V5: litre {init: 0.0646729983937618};
    var q_V5_us: litre {init: 0.06};
    var q_V6: litre {init: 0.049015650999137};
    var q_V6_us: litre {init: 0.06};
    var q_V6_usCtl: litre;
    var v_V1: L_per_s;
    var v_V2: L_per_s;
    var v_V3: L_per_s;
    var v_V4: L_per_s;
    var v_V5: L_per_s;
    var v_V6: L_per_s;
    ode(q_V1, t) = v_V2+v_lInfPhrenicV-v_V1;
    ode(q_V2, t) = v_V3+v_rInfPhrenicV-v_V2;
    ode(q_V3, t) = v_V4+v_liverV-v_V3;
    ode(q_V4, t) = v_V5+v_lRenalV-v_V4;
    ode(q_V5, t) = v_V6+v_rRenalV-v_V5;
    ode(q_V6, t) = v_lCommonIliacV+v_rCommonIliacV-v_V6;
    var u_V1: kPa;
    var u_V2: kPa;
    var u_V3: kPa;
    var u_V4: kPa;
    var u_V5: kPa;
    var u_V6: kPa;
    var E_V1: kPa_per_L {init: 400};
    var E_V2: kPa_per_L {init: 400};
    var E_V3: kPa_per_L {init: 400};
    var E_V4: kPa_per_L {init: 400};
    var E_V5: kPa_per_L {init: 400};
    var E_V6: kPa_per_L {init: 400};
    var E_V6_ctl: kPa_per_L;
    // TODO: these parameters must be replaced with physiological value
    var L_V1: liter {init: 0.1};
    var L_V2: liter {init: 0.1};
    var L_V3: liter {init: 0.1};
    var L_V4: liter {init: 0.1};
    var L_V5: liter {init: 0.1};
    var L_V6: liter {init: 0.1};
    // Chaning to nonlinear J-shape
    q_V6_usCtl = q_V6_us*(1{dim}-Delta_theta_us);
    E_V6_ctl = E_V6/(1{dim}-Delta_theta_compliance);
    u_V1 = E_V1*(q_V1-q_V1_us);
    u_V2 = E_V2*(q_V2-q_V2_us);
    u_V3 = E_V3*(q_V3-q_V3_us);
    u_V4 = E_V4*(q_V4-q_V4_us);
    u_V5 = E_V5*(q_V5-q_V5_us);
    u_V6 = E_V6_ctl*(q_V6-q_V6_usCtl);
    // u_V1 = E_V1*(q_V1-q_V1_us)/sqr(L_V1-q_V1);
    // u_V2 = E_V2*(q_V2-q_V2_us)/sqr(L_V2-q_V2);
    // u_V3 = E_V3*(q_V3-q_V3_us)/sqr(L_V3-q_V3);
    // u_V4 = E_V4*(q_V4-q_V4_us)/sqr(L_V4-q_V4);
    // u_V5 = E_V5*(q_V5-q_V5_us)/sqr(L_V5-q_V5);
    // u_V6 = E_V6*(q_V6-q_V6_us)/sqr(L_V6-q_V6);
    var R_V1: kPa_s_per_L {init: 100};
    var R_V2: kPa_s_per_L {init: 100};
    var R_V3: kPa_s_per_L {init: 100};
    var R_V4: kPa_s_per_L {init: 100};
    var R_V5: kPa_s_per_L {init: 100};
    var R_V6: kPa_s_per_L {init: 100};
    v_V1 = (u_V1-u_ra)/R_V1;
    v_V2 = (u_V2-u_V1)/R_V2;
    v_V3 = (u_V3-u_V2)/R_V3;
    v_V4 = (u_V4-u_V3)/R_V4;
    v_V5 = (u_V5-u_V4)/R_V5;
    v_V6 = (u_V6-u_V5)/R_V6;
    // Left leg
    var v_lCommonIliacA: L_per_s;
    var R_lCommonIliacA: kPa_s_per_L {init: 100};
    v_lCommonIliacA = (u_A8-u_lLegC)/R_lCommonIliacA;
    var q_lLegC: litre {init: 0.0722132318271499};
    var q_lLegC_us: litre {init: 0.06};
    var u_lLegC: kPa;
    var E_lLegC: kPa_per_L {init: 150};
    var L_lLegC: liter {init: 1};
    // TODO: must be replaced with physiological value
    ode(q_lLegC, t) = v_lCommonIliacA-v_lCommonIliacV;
    u_lLegC = E_lLegC*(q_lLegC-q_lLegC_us);
    // -> changing to non-linear elastic J-shape curve
    // u_lLegC = E_lLegC*(q_lLegC-q_lLegC_us)/sqr(L_lLegC-q_lLegC);
    var v_lCommonIliacV: L_per_s;
    var R_lCommonIliacV: kPa_s_per_L {init: 4000};
    var R_lCommonIliacV_cont: kPa_s_per_L;
    // controlling and modulating the resistance by ANS
    // unit conversion is needed fpr Delta_armLeg_theta
    R_lCommonIliacV_cont = R_lCommonIliacV+1e-6{kPa_m6_per_LJ}*Delta_armLeg_theta;
    v_lCommonIliacV = (u_lLegC-u_V6)/R_lCommonIliacV_cont;
    // Right leg
    var v_rCommonIliacA: L_per_s;
    var R_rCommonIliacA: kPa_s_per_L {init: 100};
    v_rCommonIliacA = (u_A8-u_rLegC)/R_rCommonIliacA;
    var q_rLegC: litre {init: 0.0722132318271499};
    var q_rLegC_us: litre {init: 0.06};
    var u_rLegC: kPa;
    var E_rLegC: kPa_per_L {init: 150};
    var L_rLegC: liter {init: 1};
    // TODO: must be replaced with physiological value
    ode(q_rLegC, t) = v_rCommonIliacA-v_rCommonIliacV;
    u_rLegC = E_rLegC*(q_rLegC-q_rLegC_us);
    // -> changing to non-linear elastic J-shape curve
    // u_rLegC = E_rLegC*(q_rLegC-q_rLegC_us)/sqr(L_rLegC-q_rLegC);
    var v_rCommonIliacV: L_per_s;
    var R_rCommonIliacV: kPa_s_per_L {init: 4000};
    var R_rCommonIliacV_cont: kPa_s_per_L;
    // controlling and modulating the resistance by ANS
    // unit conversion is needed fpr Delta_armLeg_theta
    R_rCommonIliacV_cont = R_rCommonIliacV+1e-6{kPa_m6_per_LJ}*Delta_armLeg_theta;
    v_rCommonIliacV = (u_rLegC-u_V6)/R_rCommonIliacV_cont;
    // Total volumes of blood in regions
    var q_TotHeart: litre;
    var q_TotLung: litre;
    var q_TotHead: litre;
    var q_TotThoracic: litre;
    var q_TotAorta: litre;
    var q_TotRenal: litre;
    var q_TotGut: litre;
    var q_TotVenaCava: litre;
    var q_TotLimbs: litre;
    var q_TotBlood: litre;
    q_TotHeart = q_ra+q_rv+q_la+q_lv;
    q_TotLung = q_lungC+q_pulmA;
    q_TotHead = q_brachiocephalicA+q_rSubclavianA+q_lSubclavianA+q_headC;
    q_TotThoracic = q_lAdrenalGlandC+q_lInfPhrenicV+q_rAdrenalGlandC+q_rInfPhrenicV;
    q_TotAorta = q_AA+q_A1+q_A2+q_A3+q_A4+q_A5+q_A6+q_A7+q_A8;
    q_TotRenal = q_lGlomerulusC+q_lPeritubularC+q_rGlomerulusC+q_rPeritubularC;
    q_TotGut = q_celiacA+q_supMesA+q_stomachC+q_spleenC+q_pancreasC+q_intestineC+q_colonC+q_portalV+q_liverC;
    q_TotVenaCava = q_V1+q_V2+q_V3+q_V4+q_V5+q_V6;
    q_TotLimbs = q_lArmC+q_rArmC+q_lLegC+q_rLegC;
    q_TotBlood = q_TotHeart+q_TotLung+q_TotHead+q_TotThoracic+q_TotAorta+q_TotRenal+q_TotGut+q_TotVenaCava+q_TotLimbs;
    // ===========      Baroreceptor        ===========
    // ref: Magosso2001AndUrsino2000
    var u_sys: J_per_m3;
    var du_sys_dt: J_per_m3s;
    var u_br: J_per_m3 {init: 8693.17428214423, pub: out};
    var v_br: per_s {pub: out};
    // Constants
    var f_br_min: per_s {init: 2.52};
    var f_br_max: per_s {init: 47.78};
    var u_nom_br: J_per_m3 {init: 17267.83628};
    var k_br: J_per_m3 {init: 5000};
    var tau_z_br: second {init: 6.37};
    var tau_p_br: second {init: 2.076};
    u_sys = 1000{J_per_m3_per_kPa}*u_AA;
    du_sys_dt = 1000{J_per_m3_per_kPa}*duAA_dt;
    // Conservation law
    ode(u_br, t) = (u_sys+tau_z_br*du_sys_dt-u_br)/tau_p_br;
    v_br = (f_br_min+f_br_max*exp((u_br-u_nom_br)/k_br))/(1{dimensionless}+exp((u_br-u_nom_br)/k_br));
    // ===========      cardiopulmonary_receptor_Gee2023        ===========
    // u_mus is closest equivalent to P_thor in Finbar's lung model
    // TODO: u_mus should be coupeld to diaphragm muscle pressure
    var u_mus: J_per_m3 {init: -1000};
    var u_pv_u_thor: J_per_m3 {pub: out};
    var u_cp: J_per_m3 {init: 4429.11114903453, pub: out};
    var v_cp: per_s {pub: out};
    // constants
    var tau_cp: second {init: 2};
    var u_tn: J_per_m3 {init: 1440};
    var k_cp: J_per_m3 {init: 190.47809};
    // equations
    u_pv_u_thor = 1000{J_per_m3_per_kPa}*u_pulmA-u_mus;
    ode(u_cp, t) = (-u_cp+u_pv_u_thor)/tau_cp;
    v_cp = f_max_cp/(1{dimensionless}+exp((u_tn-u_cp)/k_cp));
    // ===========      Lung Strech Receptor        ===========
    // constants
    var tau_lung: second {init: 0.1};
    var G_al: per_m3_s {init: 33.291};
    var phi_lung: radian {init: 0};
    var T_lung_0: second {init: 5};
    var T_lung: second;
    var q_lung_max: m3 {init: 0.001};
    var q_lung_amp: m3;
    var q_lung_baseline: m3 {init: 0.004};
    // input: must be coupled or use a sin input
    var q_lung_V: m3;
    // outputs
    var v_ls: per_s {init: 0.1290455656029, pub: out};
    var omega_lung: per_s;
    // equations
    // ==================        Simulation protocol         ==============
    T_lung = sel
      case (t < t_start_T_lung) or (t > t_end_T_lung):
        T_lung_0;
      otherwise:
        T_lung_0*T_lung_multiplier;
    endsel;
    q_lung_amp = sel
      case (t < t_start_q_lung_amp) or (t > t_end_q_lung_amp):
        q_lung_max;
      otherwise:
        q_lung_max*q_lung_max_multiplier;
    endsel;
    // ====================================================================
    omega_lung = 2{dim}*pi/T_lung;
    q_lung_V = q_lung_amp*sin(omega_lung*t+phi_lung)+q_lung_baseline;
    // ode(v_ls, t) = tau_lung*(-v_ls+G_al*V_lung);
    // changed so that tau has correct units of seconds. tau should be a time constant
    // Finbar has modified this to measure bronchiole stressed volume, and only increase frequency when this
    // stressed volume is above zero.
    ode(v_ls, t) = (-v_ls+G_al*max(q_lung_V, 0{m3}))/tau_lung;
    // ===========      Chemoreceptor        ===========
    // inp variables: Must be coupeld to lung air flow module - set as boundary inputs at this stage
    var C_CO2_a0: dimensionless {init: 0.48};
    var C_O2_a0: dimensionless {init: 0.2};
    var C_O2_a: dimensionless;
    var C_CO2_a: dimensionless;
    var dot_C_CO2_a: per_s {init: 0};
    // output variables
    var X_O2: dimensionless {pub: out};
    var phi_stat: per_s {pub: out};
    var phi_CO2_dyn: per_s {init: 0.0, pub: out};
    var v_chemo_stat: per_s {pub: out};
    var v_chemo_dyn: per_s {pub: out};
    var v_chemo_apc: per_s {pub: out};
    var phi_apc: per_s {init: 2.47451997643197, pub: out};
    var u_chemo_O2_a: J_per_m3 {pub: out};
    // Constants
    var AA: dimensionless {init: 600};
    var BB: dimensionless {init: 10.18};
    var C_CO2_a_nom: dimensionless {init: 0.36};
    var K_O2: dimensionless {init: 200};
    var K_CO2: per_s {init: 1};
    var K_stat: per_s {init: 20};
    var K_dyn: per_s {init: 45};
    var tau_cap: second {init: 3.5};
    var tau_CO2_cc_dyn: dimensionless {init: 600};
    var Hgb: kg_per_m3 {init: 150};
    var C_O2_sat: dimensionless {init: 0.20448};
    var C_CO2_sat: dimensionless {init: 1.9564};
    var alpha_O2: m3_per_J {init: 2.33e-7};
    var alpha_1: m3_per_J {init: 2.4e-4};
    var alpha_2: m3_per_J {init: 4.19e-4};
    var beta_1: m3_per_J {init: 6.21e-5};
    var beta_2: m3_per_J {init: 2.44e-4};
    var k_1: J_per_m3 {init: 1998.5};
    var k_2: J_per_m3 {init: 25917.4};
    var h_1: dimensionless {init: 0.3836};
    var h_2: dimensionless {init: 1.819};
    // private variables
    var S_O2_a: dimensionless {pub: out};
    var C_O2_a_diss: dimensionless {pub: out};
    var d_1: J_per_m3 {pub: out};
    var d_2: J_per_m3 {pub: out};
    var r_1: J_per_m3 {pub: out};
    var r_2: J_per_m3 {pub: out};
    var s_1: J2_per_m6 {pub: out};
    var s_2: J2_per_m6 {pub: out};
    // equations
    // ==================        Simulation protocol         ==============
    C_O2_a = sel
      case (t < t_start_C_O2) or (t > t_end_C_O2):
        C_O2_a0;
      otherwise:
        C_O2_a0*C_O2_multiplier;
    endsel;
    C_CO2_a = sel
      case (t < t_start_C_CO2) or (t > t_end_C_CO2):
        C_CO2_a0;
      otherwise:
        C_CO2_a0*C_CO2_multiplier;
    endsel;
    // ====================================================================
    d_1 = max(k_1*pow(C_O2_a/(C_O2_sat-C_O2_a), h_1), 0{J_per_m3});
    d_2 = max(k_2*pow(C_CO2_a/(C_CO2_sat-C_CO2_a), h_2), 0{J_per_m3});
    r_1 = -0.5{dimensionless}*(1{dimensionless}+beta_1*d_2-beta_2*d_1-alpha_1*alpha_2*d_1*d_2)/(beta_2+alpha_2*beta_1*d_2);
    r_2 = -0.5{dimensionless}*(1{dimensionless}+beta_2*d_1-beta_1*d_2-alpha_2*alpha_1*d_2*d_1)/(beta_1+alpha_1*beta_2*d_1);
    s_1 = -1{dimensionless}*(d_1+alpha_1*d_1*d_2)/(beta_2+alpha_2*beta_1*d_2);
    s_2 = -1{dimensionless}*(d_2+alpha_2*d_2*d_1)/(beta_1+alpha_1*beta_2*d_1);
    u_chemo_O2_a = r_1+sqrt(sqr(r_1)-s_1);
    C_O2_a_diss = sel
      case C_O2_sat-Hgb*1.34e-3{m3_per_kg}-u_chemo_O2_a*alpha_O2 >= 0{dimensionless}:
        u_chemo_O2_a*alpha_O2;
      otherwise:
        C_O2_sat-Hgb*1.34e-3{m3_per_kg};
    endsel;
    S_O2_a = (C_O2_a-C_O2_a_diss)/(Hgb*1.34e-3{m3_per_kg});
    X_O2 = AA*(1{dimensionless}-S_O2_a)+BB;
    phi_stat = K_CO2*(C_CO2_a-C_CO2_a_nom)*K_O2*(1{dimensionless}-exp(-X_O2/K_O2));
    v_chemo_stat = sel
      case C_CO2_a >= C_CO2_a_nom:
        K_stat*(1{dimensionless}-exp(-phi_stat/K_stat));
      otherwise:
        0{per_s};
    endsel;
    ode(phi_CO2_dyn, t) = (dot_C_CO2_a*tau_CO2_cc_dyn-phi_CO2_dyn)/tau_cap;
    v_chemo_dyn = K_dyn*(1{dimensionless}-exp(-phi_CO2_dyn/K_dyn));
    ode(phi_apc, t) = (v_chemo_stat+v_chemo_dyn-phi_apc)/tau_cap;
    v_chemo_apc = max(phi_apc, 0{per_s});
    // ===========      NTS        ===========
    // outputs
    var v_NTS_br: per_s {pub: out};
    var v_NTS_ls: per_s {pub: out};
    var v_NTS_cp: per_s {pub: out};
    var v_NTS_chemo: per_s {pub: out};
    // constants
    var f_min_br: per_s {init: 0.304};
    var f_max_br: per_s {init: 21.499};
    var f_mid_br: per_s {init: 44.125};
    var f_min_cp: per_s {init: 0.451};
    var f_max_cp: per_s {init: 28.327};
    var f_mid_cp: per_s {init: 20.2};
    var f_min_ls: per_s {init: 2.75};
    var f_max_ls: per_s {init: 31.569};
    var f_mid_ls: per_s {init: 0.13};
    var f_min_ch: per_s {init: 2.11};
    var f_max_ch: per_s {init: 24.4};
    var f_mid_ch: per_s {init: 17.7};
    var k_NTS_br: dimensionless {init: 21};
    var k_NTS_ls: dimensionless {init: 2};
    var k_NTS_cp: dimensionless {init: 7};
    var k_NTS_ch: dimensionless {init: 1.86};
    // equations
    v_NTS_br = (f_min_br-f_max_br)/(1{dimensionless}+pow(v_br/f_mid_br, k_NTS_br))+f_max_br;
    v_NTS_ls = (f_min_ls-f_max_ls)/(1{dimensionless}+pow(v_ls/f_mid_ls, k_NTS_ls))+f_max_ls;
    v_NTS_cp = (f_min_cp-f_max_cp)/(1{dimensionless}+pow(v_cp/f_mid_cp, k_NTS_cp))+f_max_cp;
    v_NTS_chemo = (f_min_ch-f_max_ch)/(1{dimensionless}+pow(v_chemo_apc/f_mid_ch, k_NTS_ch))+f_max_ch;
    // ===========      NA        ===========
    // inputs: s_floor comes from lung module :
    var s_floor: dimensionless;
    // outputs
    var v_NTS_output: per_s {pub: out};
    var v_NA_input: per_s {pub: out};
    var v_NA: per_s {pub: out};
    // constants
    var k_RSA: dimensionless {init: 0.5};
    var f_min_NA: per_s {init: 4.88};
    var f_max_NA: per_s {init: 15.78};
    var f_mid_NA: per_s {init: 30};
    var k_NA: dimensionless {init: 23};
    // equations
    v_NTS_output = v_NTS_br+v_NTS_ls+v_NTS_cp+v_NTS_chemo;
    v_NA_input = sel
      case s_floor > 0.4{dimensionless}:
        v_NTS_output;
      otherwise:
        v_NTS_output*k_RSA;
    endsel;
    v_NA = (f_min_NA-f_max_NA)/(1{dimensionless}+pow(v_NA_input/f_mid_NA, k_NA))+f_max_NA;
    // ===========      DMV        ===========
    // constants
    var f_min_DMV: per_s {init: 2.59};
    var f_max_DMV: per_s {init: 6.66};
    var f_mid_DMV: per_s {init: 42.91};
    var k_DMV: dimensionless {init: 33.5};
    // outputs
    var v_DMV_out: per_s {pub: out};
    // equations
    v_DMV_out = (f_min_DMV-f_max_DMV)/(1{dimensionless}+pow((v_NTS_ls+v_NTS_cp)/f_mid_DMV, k_DMV))+f_max_DMV;
    // ===========      NA_ino        ===========
    // constants
    var f_min_NAino: per_s {init: 0.61};
    var f_max_NAino: per_s {init: 11};
    var f_mid_NAino: per_s {init: 12.81};
    var k_NAino: dimensionless {init: 23};
    // outputs
    var v_NAino: per_s {pub: out};
    // equations
    v_NAino = (f_min_NAino-f_max_NAino)/(1{dimensionless}+pow(v_NA/f_mid_NAino, k_NAino))+f_max_NAino;
    // ===========      RVLM         ===========
    // outputs
    var f_RVLM_premax: per_s {pub: out};
    var v_RVLM: per_s {pub: out};
    // Constants
    var f_RVLM_0: per_s {init: 16.11};
    var f_RVLM_inf: per_s {init: 2.1};
    var f_RVLM_max: per_s {init: 60};
    var k_RVLM: second {init: 0.0675};
    var W_br: dimensionless {init: -1.47};
    var W_chemo: dimensionless {init: 5};
    // equations
    f_RVLM_premax = f_RVLM_inf+(f_RVLM_0-f_RVLM_inf)*exp(k_RVLM*(W_br*v_br+W_chemo*v_chemo_apc));
    v_RVLM = sel
      case f_RVLM_premax <= f_RVLM_max:
        f_RVLM_premax;
      otherwise:
        f_RVLM_max;
    endsel;
    // ===========      LCN        ===========
    // constants
    var k_evEmax_gainLCN: dimensionless {init: 4.47};
    var k_br_gainLCN: dimensionless {init: 2.49};
    var k_RVLM_gainLCN: dimensionless {init: 0.0594};
    var k_cp_gainLCN: dimensionless {init: 6.95};
    var f_mid_LCN: per_s {init: 737};
    var f_min_LCN: per_s {init: 1.25};
    var f_max_LCN: per_s {init: 30.5};
    var k_LCN: dimensionless {init: 4.32};
    // outputs
    var v_input_LCN_sum: per_s {pub: out};
    var v_input_LCN: per_s {pub: out};
    var v_LCN: per_s {pub: out};
    // equations
    v_input_LCN_sum = k_evEmax_gainLCN*(v_DMV_out+v_NAino)+k_br_gainLCN*v_br-k_RVLM_gainLCN*v_RVLM+k_cp_gainLCN*v_cp;
    v_input_LCN = sel
      case v_input_LCN_sum >= 0{per_s}:
        v_input_LCN_sum;
      otherwise:
        0{per_s};
    endsel;
    v_LCN = (f_min_LCN-f_max_LCN)/(1{dimensionless}+pow(v_input_LCN/f_mid_LCN, k_LCN))+f_max_LCN;
    // ===========      PNNA        ===========
    // inputs - TODO: should be coupled correspondingly
    var f_vagal_stim: per_s;
    // ===========      simulation protocol         ===========
    f_vagal_stim = sel
      case (t < t_start_vagal_stim) or (t > t_end_vagal_stim):
        0{per_s};
      otherwise:
        vagal_stim_freq;
    endsel;
    // ========================================================
    // constants
    var f_min_PNNA: per_s {init: 1.039};
    var f_max_PNNA: per_s {init: 17.9};
    var f_mid_PNNA: per_s {init: 8.5};
    var k_PNNA: dimensionless {init: 1.98};
    // outputs
    var v_PNNA_natural: per_s {pub: out};
    var v_PNNA: per_s {pub: out};
    // equations
    v_PNNA_natural = (f_min_PNNA-f_max_PNNA)/(1{dimensionless}+pow((v_NA+v_LCN)/f_mid_PNNA, k_PNNA))+f_max_PNNA;
    v_PNNA = v_PNNA_natural+f_vagal_stim;
    // ===========      PNDMV        ===========
    // constants
    var f_mid_PNDMV: per_s {init: 10.4};
    var f_min_PNDMV: per_s {init: 9.35};
    var f_max_PNDMV: per_s {init: 28.2};
    var k_PNDMV: dimensionless {init: 23.8};
    var tau_PNDMV: second {init: 2.53};
    // outputs
    var v_PNDMV: per_s {pub: out};
    var v_PNDMV_filt: per_s {init: 21.9565661323856, pub: out};
    // equations
    v_PNDMV = (f_min_PNDMV-f_max_PNDMV)/(1{dimensionless}+pow((v_DMV_out+v_NAino+v_LCN)/f_mid_PNDMV, k_PNDMV))+f_max_PNDMV;
    ode(v_PNDMV_filt, t) = (v_PNDMV-v_PNDMV_filt)/tau_PNDMV;
    // ===========      lv_elastance_effector        ===========
    // outputs
    var sigma_lv_Es: J_per_m6 {pub: out};
    var Delta_lv_Es: J_per_m6 {init: 37655714.7138116, pub: out};
    var sigma_lv_Ev: J_per_m6 {pub: out};
    var Delta_lv_Ev: J_per_m6 {init: -21508.1810252261, pub: out};
    var Delta_lv_Emax: J_per_m6 {pub: out};
    // constants
    // value changed from 1084065.576 to increase sensitivity to sympathetic activity
    var G_lv_Es: J_per_m6 {init: 15084065.576};
    var tau_lv_Es: second {init: 0.2};
    var G_lv_Ev: Js_per_m6 {init: -1000};
    var tau_lv_Ev: second {init: 0.2};
    var scale_lv_E: dimensionless {init: 1};
    var f_es_min: per_s {init: 2.66};
    // equations
    sigma_lv_Es = sel
      case v_RVLM >= f_es_min:
        G_lv_Es*ln(1{second}*(v_RVLM-f_es_min+1{per_s}));
      otherwise:
        0{J_per_m6};
    endsel;
    ode(Delta_lv_Es, t) = 1{dimensionless}/tau_lv_Es*(-Delta_lv_Es+sigma_lv_Es);
    sigma_lv_Ev = G_lv_Ev*v_PNDMV_filt;
    ode(Delta_lv_Ev, t) = 1{dimensionless}/tau_lv_Ev*(-Delta_lv_Ev+sigma_lv_Ev);
    Delta_lv_Emax = scale_lv_E*(Delta_lv_Es+Delta_lv_Ev);
    // ===========      rv_elastance_effector        ===========
    // outputs
    var sigma_rv_Es: J_per_m6 {pub: out};
    var Delta_rv_Es: J_per_m6 {init: 19579175.826722, pub: out};
    var sigma_rv_Ev: J_per_m6 {pub: out};
    var Delta_rv_Ev: J_per_m6 {init: -2150705.989567, pub: out};
    var Delta_rv_Emax: J_per_m6 {pub: out};
    // constants
    var G_rv_Es: J_per_m6 {init: 8000000};
    var tau_rv_Es: second {init: 2};
    var G_rv_Ev: Js_per_m6 {init: -100000};
    var tau_rv_Ev: second {init: 0.2};
    var scale_rv_E: dimensionless {init: 0.5903};
    // equations
    sigma_rv_Es = sel
      case v_RVLM >= f_es_min:
        G_rv_Es*ln(1{second}*(v_RVLM-f_es_min+1{per_s}));
      otherwise:
        0{J_per_m6};
    endsel;
    ode(Delta_rv_Es, t) = 1{dimensionless}/tau_rv_Es*(-Delta_rv_Es+sigma_rv_Es);
    sigma_rv_Ev = G_rv_Ev*v_PNDMV_filt;
    ode(Delta_rv_Ev, t) = 1{dimensionless}/tau_rv_Ev*(-Delta_rv_Ev+sigma_rv_Ev);
    Delta_rv_Emax = scale_rv_E*(Delta_rv_Es+Delta_rv_Ev);
    // ===========      heart period effector        ===========
    // f_v copupled to v_PNNA
    // outputs: TODO: couple delta_heart_T to the heart module
    var Delta_heart_Ts: second {init: -0.733220437110031, pub: out};
    var Delta_heart_Tv: second {init: 0.684177420373057, pub: out};
    var Delta_heart_T: second {pub: out};
    var sigma_heart_Ts: second {pub: out};
    var sigma_heart_Tv: second {pub: out};
    // constants
    // value changed from -0.2 to -0.3 to increase sensitivity to sympathetic activity
    var G_heart_Ts: second {init: -0.3};
    var G_heart_Tv: s2 {init: 0.05};
    var tau_heart_Ts: second {init: 2};
    var tau_heart_Tv: second {init: 1.5};
    // equations
    sigma_heart_Ts = sel
      case v_RVLM >= f_es_min:
        G_heart_Ts*ln(1{second}*(v_RVLM-f_es_min+1{per_s}));
      otherwise:
        0{second};
    endsel;
    ode(Delta_heart_Ts, t) = (-Delta_heart_Ts+sigma_heart_Ts)/tau_heart_Ts;
    sigma_heart_Tv = G_heart_Tv*v_PNNA;
    // DELAY IGNORED
    ode(Delta_heart_Tv, t) = (-Delta_heart_Tv+sigma_heart_Tv)/tau_heart_Tv;
    Delta_heart_T = Delta_heart_Tv+Delta_heart_Ts;
    // ===========      venous unstressed volume and compliance effector        ===========
    // outputs
    var Delta_theta_us: dimensionless {pub: out};
    var sigma_theta_us: per_s {init: 11.121606629691, pub: out};
    var Delta_theta_compliance: dimensionless {pub: out};
    var sigma_theta_compliance: per_s {init: 11.121606629691, pub: out};
    // constants
    var G_theta_us: dimensionless {init: 0.3};
    var G_theta_compliance: dimensionless {init: 0.3};
    var tau_theta_us: second {init: 20};
    var tau_theta_compliance: second {init: 20};
    // Equations
    // TODO for both of the below, it probably shouln't be additive. It should be impossible to get to negative.
    // changed the below from ln to hill function so we can limit the amount it can change compliance and us volume. Now G_theta_us is the maximum amount of change
    // that can occur to the us volume
    // G_theta is now a max proportion of us volume or compliance that can be decreased.
    ode(sigma_theta_us, t) = (max(v_RVLM-f_es_min, 0{per_s})-sigma_theta_us)/tau_theta_us;
    Delta_theta_us = G_theta_compliance*sigma_theta_us/(f_es_min+sigma_theta_us);
    ode(sigma_theta_compliance, t) = (max(v_RVLM-f_es_min, 0{per_s})-sigma_theta_compliance)/tau_theta_compliance;
    Delta_theta_compliance = G_theta_compliance*sigma_theta_compliance/(f_es_min+sigma_theta_compliance);
    // ===========      arm-leg resistance effector        ===========
    // Constants
    var G_armLeg_theta: Js_per_m6 {init: 227000000};
    var tau_armLeg_theta: second {init: 6};
    // outputs
    var Delta_armLeg_theta: Js_per_m6 {init: 601095917.449606, pub: out};
    var sigma_armLeg_theta: Js_per_m6 {pub: out};
    // Equations
    sigma_armLeg_theta = sel
      case v_RVLM >= f_es_min:
        G_armLeg_theta*ln(1{second}*(v_RVLM-f_es_min+1{per_s}));
      otherwise:
        0{Js_per_m6};
    endsel;
    ode(Delta_armLeg_theta, t) = (-Delta_armLeg_theta+sigma_armLeg_theta)/tau_armLeg_theta;
    // ===========      Blood Volume Control: left Kidney        ===========
    // outputs
    var u_lpt_W: kPa;
    var q_lpt_W: litre {init: 0.521056165876984};
    var c_lpt_Na: mol_per_L;
    var C_lpt_Na: mM;
    var q_lpt_Na: mole {init: 0.00805209530950799};
    var q_lptEpi_Na: mole {init: 0.00460774921555305};
    var c_lptEpi_Na: mol_per_L;
    var C_lptEpi_Na: mM;
    var c_lPeritubularC_Na: mol_per_L;
    var C_lPeritubularC_Na: mM;
    var u_lpt_osmotic: kPa;
    var u_lPeritubularC_osmotic: kPa;
    var u_lptEpi_e: J_per_C {init: -0.040};
    var v_lgl_W: L_per_s;
    var v_lpt_W: L_per_s;
    var v_lpt_Na: mol_per_s;
    var v_lptEpi_NKE: mol_per_s;
    var v_lgl_Na: mol_per_s;
    var q_lPeritubularC_K: mole {init: 0.03};
    var q_lptEpi_K: mole {init: 0.012};
    // boundary conditions
    var v_out2_W: L_per_s {init: 0};
    var v_out2_Na: mol_per_s {init: 1.16e-6};
    // constants
    var RT: J_per_mol {init: 2.5e3};
    var F: C_per_mol {init: 0.965e5};
    var E_pt: joule {init: 1};
    var U_pt_W: litre {init: 0.1};
    var L_pt_W: litre {init: 1};
    var q_lptEpi_W: litre {init: 0.5};
    var k_pt_W: L_per_s_per_kPa {init: 0};
    var k_gl_W: L_per_s_per_kPa {init: 5};
    var kK_pt_Na: per_s {init: 1};
    var kK_gl_Na: per_s {init: 1};
    var k_ptEpi_NKE: mol_per_s {init: 1e5};
    var K_Na: L_per_mol {init: 1};
    var K_K: L_per_mol {init: 1};
    // equations
    ode(q_lpt_W, t) = v_lgl_W-v_lpt_W-v_out2_W;
    ode(q_lptEpi_Na, t) = v_lpt_Na-v_lptEpi_NKE;
    ode(q_lpt_Na, t) = v_lgl_Na-v_lpt_Na-v_out2_Na;
    u_lpt_W = E_pt*(q_lpt_W-U_pt_W)/sqr(L_pt_W-q_lpt_W);
    c_lpt_Na = q_lpt_Na/q_lpt_W;
    c_lptEpi_Na = q_lptEpi_Na/q_lptEpi_W;
    c_lPeritubularC_Na = q_vc_Na/q_lPeritubularC;
    C_lpt_Na = 1e3{dim}*c_lpt_Na;
    C_lptEpi_Na = 1e3{dim}*c_lptEpi_Na;
    C_lPeritubularC_Na = 1e3{dim}*c_lPeritubularC_Na;
    u_lpt_osmotic = RT*c_lpt_Na;
    u_lPeritubularC_osmotic = RT*c_lPeritubularC_Na;
    v_lpt_W = k_pt_W*(u_lPeritubularC_osmotic-u_lpt_osmotic);
    v_lpt_Na = kK_pt_Na*(q_lpt_Na-q_lptEpi_Na);
    v_lptEpi_NKE = 3{dim}*k_ptEpi_NKE*(pow(K_Na*q_lptEpi_Na/q_lptEpi_W, 3{dim})*sqr(K_K*q_lPeritubularC_K/q_lPeritubularC)-pow(K_Na*q_vc_Na/q_lPeritubularC, 3{dim})*sqr(K_K*q_lptEpi_K/q_lptEpi_W)*exp(2{dim}*F*u_lptEpi_e/RT))/((1{dim}+pow(K_Na*q_lptEpi_Na/q_lptEpi_W, 3{dim}))*(1{dim}+pow(K_Na*q_vc_Na/q_lPeritubularC, 3{dim}))*(1{dim}+sqr(K_K*q_lPeritubularC_K/q_lPeritubularC))*(1{dim}+sqr(K_K*q_lptEpi_K/q_lptEpi_W)));
    v_lgl_W = k_gl_W*(u_lGlomerulusC-u_lpt_W);
    v_lgl_Na = kK_gl_Na*(q_vc_Na-q_lpt_Na);
    // ===========      Blood Volume Control: right Kidney        ===========
    // constants
    var q_rptEpi_W: litre {init: 0.5};
    // outputs
    var u_rpt_W: kPa;
    var q_rpt_W: litre {init: 0.520759656230573};
    var c_rpt_Na: mol_per_L;
    var C_rpt_Na: mM;
    var q_rpt_Na: mole {init: 0.00805190956611238};
    var q_rptEpi_Na: mole {init: 0.0046073280304522};
    var c_rptEpi_Na: mol_per_L;
    var C_rptEpi_Na: mM;
    var c_rPeritubularC_Na: mol_per_L;
    var C_rPeritubularC_Na: mM;
    var u_rpt_osmotic: kPa;
    var u_rPeritubularC_osmotic: kPa;
    var u_rptEpi_e: J_per_C {init: -0.040};
    var v_rgl_W: L_per_s;
    var v_rpt_W: L_per_s;
    var v_rpt_Na: mol_per_s;
    var v_rptEpi_NKE: mol_per_s;
    var v_rgl_Na: mol_per_s;
    var q_rPeritubularC_K: mole {init: 0.03};
    var q_rptEpi_K: mole {init: 0.012};
    // equations
    ode(q_rpt_W, t) = v_rgl_W-v_rpt_W-v_out2_W;
    ode(q_rptEpi_Na, t) = v_rpt_Na-v_rptEpi_NKE;
    ode(q_rpt_Na, t) = v_rgl_Na-v_rpt_Na-v_out2_Na;
    u_rpt_W = E_pt*(q_rpt_W-U_pt_W)/sqr(L_pt_W-q_rpt_W);
    c_rpt_Na = q_rpt_Na/q_rpt_W;
    c_rptEpi_Na = q_rptEpi_Na/q_rptEpi_W;
    c_rPeritubularC_Na = q_vc_Na/q_rPeritubularC;
    C_rpt_Na = 1e3{dim}*c_rpt_Na;
    C_rptEpi_Na = 1e3{dim}*c_rptEpi_Na;
    C_rPeritubularC_Na = 1e3{dim}*c_rPeritubularC_Na;
    u_rpt_osmotic = RT*c_rpt_Na;
    u_rPeritubularC_osmotic = RT*c_rPeritubularC_Na;
    v_rpt_W = k_pt_W*(u_rPeritubularC_osmotic-u_rpt_osmotic);
    v_rpt_Na = kK_pt_Na*(q_rpt_Na-q_rptEpi_Na);
    v_rptEpi_NKE = 3{dim}*k_ptEpi_NKE*(pow(K_Na*q_rptEpi_Na/q_rptEpi_W, 3{dim})*sqr(K_K*q_rPeritubularC_K/q_rPeritubularC)-pow(K_Na*q_vc_Na/q_rPeritubularC, 3{dim})*sqr(K_K*q_rptEpi_K/q_rptEpi_W)*exp(2{dim}*F*u_rptEpi_e/RT))/((1{dim}+pow(K_Na*q_rptEpi_Na/q_rptEpi_W, 3{dim}))*(1{dim}+pow(K_Na*q_vc_Na/q_rPeritubularC, 3{dim}))*(1{dim}+sqr(K_K*q_rPeritubularC_K/q_rPeritubularC))*(1{dim}+sqr(K_K*q_rptEpi_K/q_rptEpi_W)));
    v_rgl_W = k_gl_W*(u_rGlomerulusC-u_rpt_W);
    v_rgl_Na = kK_gl_Na*(q_vc_Na-q_rpt_Na);
    // ===========      Blood Volume Control: GI        ===========
    // outputs
    var q_gi_W: litre {init: 0.0282852352956092};
    var c_gi_Na: mol_per_L;
    var C_gi_Na: mM;
    var q_gi_Na: mole {init: 0.00413018483992228};
    var q_giEpi_Na: mole {init: 0.00104446781277001};
    var c_giEpi_Na: mol_per_L;
    var C_giEpi_Na: mM;
    var c_intestineC_Na: mol_per_L;
    var C_intestineC_Na: mM;
    var u_gi_osmotic: kPa;
    var u_intestineC_osmotic: kPa;
    var u_giEpi_e: J_per_C {init: -0.040};
    var v_gi_W: L_per_s;
    var v_gi_Na: mol_per_s;
    var v_giEpi_NKE: mol_per_s;
    var q_intestineC_K: mole {init: 0.03};
    // boundary conditions
    var v_giOut_W: L_per_s {init: 0};
    var v_giOut_Na: mol_per_s {init: 1.16e-6};
    var v_giIn_W0: L_per_s {init: 0};
    var v_giIn_W: L_per_s;
    var v_giIn_Na0: mol_per_s {init: 1.16e-6};
    var v_giIn_Na: mol_per_s;
    // constants
    var q_giEpi_W: litre {init: 0.5};
    var k_gi_W: L_per_s_per_kPa {init: 1e-3};
    var kK_gi_Na: per_s {init: 1};
    var k_giEpi_NKE: mol_per_s {init: 1e5};
    var q_giEpi_K: mole {init: 0.012};
    // equations
    // ==========        Simulation protocol        ==========
    v_giIn_W = sel
      case (t < t_start_v_giIn_W) or (t > t_end_v_giIn_W):
        v_giIn_W0;
      otherwise:
        v_giIn_W0+v_giIn_W_adder;
    endsel;
    v_giIn_Na = sel
      case (t < t_start_v_giIn_Na) or (t > t_end_v_giIn_Na):
        v_giIn_Na0;
      otherwise:
        v_giIn_Na0+v_giIn_Na_adder;
    endsel;
    // =======================================================
    ode(q_gi_W, t) = v_giIn_W-v_gi_W-v_giOut_W;
    ode(q_gi_Na, t) = v_giIn_Na-v_gi_Na-v_giOut_Na;
    ode(q_giEpi_Na, t) = v_gi_Na-v_giEpi_NKE;
    c_gi_Na = q_gi_Na/q_gi_W;
    c_giEpi_Na = q_giEpi_Na/q_giEpi_W;
    c_intestineC_Na = q_vc_Na/q_intestineC;
    C_gi_Na = 1e3{dim}*c_gi_Na;
    C_giEpi_Na = 1e3{dim}*c_giEpi_Na;
    C_intestineC_Na = 1e3{dim}*c_intestineC_Na;
    u_gi_osmotic = RT*c_gi_Na;
    u_intestineC_osmotic = RT*c_intestineC_Na;
    v_gi_W = k_gi_W*(u_intestineC_osmotic-u_gi_osmotic);
    v_gi_Na = kK_gi_Na*(q_gi_Na-q_giEpi_Na);
    v_giEpi_NKE = 3{dim}*k_giEpi_NKE*(pow(K_Na*q_giEpi_Na/q_giEpi_W, 3{dim})*sqr(K_K*q_intestineC_K/q_intestineC)-pow(K_Na*q_vc_Na/q_intestineC, 3{dim})*sqr(K_K*q_giEpi_K/q_giEpi_W)*exp(2{dim}*F*u_giEpi_e/RT))/((1{dim}+pow(K_Na*q_giEpi_Na/q_giEpi_W, 3{dim}))*(1{dim}+pow(K_Na*q_vc_Na/q_intestineC, 3{dim}))*(1{dim}+sqr(K_K*q_intestineC_K/q_intestineC))*(1{dim}+sqr(K_K*q_giEpi_K/q_giEpi_W)));
    // ===========      Control Na across compartments        ===========
    var q_tot_Na: mole;
    var q_vc_Na: mole {init: 0.0114979848860844};
    // equations
    ode(q_vc_Na, t) = v_giEpi_NKE+v_lptEpi_NKE+v_rptEpi_NKE-v_lgl_Na-v_rgl_Na;
    q_tot_Na = q_vc_Na+q_gi_Na+q_lpt_Na+q_rpt_Na+q_giEpi_Na+q_rptEpi_Na+q_lptEpi_Na;
  enddef;
enddef;
